PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = speech_rate
  keyboardBackend = Pyglet
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will hear 125 audio segments with varying speeds of speech and durations. You will be asked to:

        1. While listening to each segment, continuously indicate your level of comprehension using the slider.

        2. After the listening, rate your understanding on a scale from 1 to 10.

        3. Give a written summary of what you heard.

        4. Answer a multiple-choice question.

        The segments you will hear are about an actress named Franny living in NYC with her two flatmates, Jane and Dan.

        Don't worry if it's not clear yet! We have two training rounds with the slowest and fastest speeds.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start Training
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    CodeComponent slider_setup
      Code Type = Py
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      Before Experiment:
        import serial
        import time
        import serial.tools.list_ports
        import multiprocessing as mp
        import csv
        import sys

        def workerBody(participant, session, stop, trial, ready, queue):
            output_data = []
            ports = serial.tools.list_ports.comports()
            for port, desc, hwid in sorted(ports):
                if desc == "Feather M0 Express":
                    port2 = port

            ser = serial.Serial(port2, 500000, timeout=0.01)
            ready.set()
            while not stop.is_set():
                ser.readline()
                if trial.is_set():
                    ready.clear()
                    trial_start_time = time.monotonic()
                    trial_offset = 0
                    while trial.is_set():
                        line = ser.readline()
                        if trial_offset == 0:
                            trial_offset = time.monotonic()

                        try:
                            output_data.append(
                                (int(line.decode("utf-8").split(' ')[0]), int(line.decode("utf-8").split(' ')[1])))
                        except:
                            print("Warning: missing frame")

                    try:
                        real_time_elapsed = 1000 * (time.monotonic() - trial_start_time)
                        drift = real_time_elapsed - (output_data[-1][1] - output_data[0][1])
                        print((drift / (output_data[-1][1] - output_data[0][1])) * 100)

                        offset = output_data[0][1]
                        for i, pt in enumerate(output_data):
                            output_data[i] = (pt[0], pt[1] - offset + ((trial_offset - trial_start_time) * 1000))

                        with open(f"{_thisDir}/data/slider_{participant}_{session}_{queue.get()}.csv",'w') as out:
                            csv_out=csv.writer(out)
                            csv_out.writerow([drift, real_time_elapsed])
                            csv_out.writerow(['value','time'])
                            for row in output_data:
                                csv_out.writerow(row)

                    except Exception as error:
                        print("Error occured while processing last trial. Data discarded")
                        print(error)

                    output_data.clear()
                    ready.set()
            ser.close()


        class Slider:
            def __init__(self, participant, session):
                mp.set_start_method('spawn')
                self.stop = mp.Event()
                self.trial = mp.Event()
                self.ready = mp.Event()
                self.queue = mp.Queue()
                self.proc = mp.Process(target=workerBody, args=(
                    participant, session, self.stop, self.trial, self.ready, self.queue))
                self.proc.start()

                while not self.ready.is_set():
                    if not self.proc.is_alive():
                        raise Exception("Error: Slider process exited")
                    time.sleep(0.01)

            def start_trial(self, wav_file):
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)
                    self.trial.set()
                    self.queue.put(wav_file)

            def stop_trial(self):
                self.trial.clear()
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)

            def __del__(self):
                self.stop.set()
                self.proc.join()
      Begin Experiment:
        myslider = Slider(expInfo['participant'], expInfo['session'])
      End Experiment:
        del myslider
  Routine Training_Segment
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    SoundComponent Experimen_audio
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0.00
      stopWithRoutine = False
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    CodeComponent slider_rt
      Code Type = Py
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      Begin Routine:
        myslider.start_trial(wav_file)
      End Routine:
        myslider.stop_trial()
    PolygonComponent polygon
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine Rating
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.2
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      size = (0.2, 0.1)
      startVal [condition] = slider.rating
      text = Confirm
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.2
      text = How well did you understand it?
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if summary == "yes":
            summa = 1
        else:
            summa = 0
  Routine Multiple_Choice
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    FormComponent form
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Training_data.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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    ButtonComponent Confirm
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Confirm
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  Routine Multiple_Choice_2
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    TextComponent Question
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent Option_1
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C1
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    TextComponent Option_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C2
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    TextComponent Option_3
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C3
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    TextComponent Option_4
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C4
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    ButtonComponent A
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent B
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.1,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent C
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.2,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent D
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
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  Routine Summary
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    TextComponent countdown
      letterHeight = 0.1
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $int(round(30 - t, 3))
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.02
      placeholder [set every repeat] = Summarize here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ButtonComponent summary_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text [set every repeat] = Done
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  Routine Start_Summary
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have maximum 30 seconds to write.
        You can click on the 'Done' button if you finish earlier than 30 seconds.
    ButtonComponent summary_button
      bold = True
      callback = button_pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if button_pressed == "next":
            doSum = 1
        else:
            doSum = 0
  Routine Start_Segment
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    ButtonComponent Play
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent Trial_counter
      letterHeight = 0.02
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(round((experiment.thisN / experiment.nTotal) * 100)) + ' %' 
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    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider.
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  Routine Start_Exp
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    TextComponent Start_exp
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press the button below to start the experiment.
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    ButtonComponent Start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine Start_Sum_Exp
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have maximum 30 seconds to write.
        You can click on the 'Done' button if you finish earlier than 30 seconds.
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if button_pressed == "next":
            doSumexp = 1
        else:
            doSumexp = 0
    ButtonComponent sum_button
      bold = True
      callback = button_pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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  Routine Start_Segment_Train
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    ButtonComponent Play_train
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent Trial_counter_train
      letterHeight = 0.02
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Completed = ' +str(training.thisN) + '\n Remaining = ' + str(training.nRemaining + 1)
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    TextComponent text_5
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider.
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  Routine summary_true
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  Routine Thanks
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    TextComponent text_7
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Thank you!
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  Routine Experimenter
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    TextComponent reminder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dear Experimenter,

        Please make sure that the input file is changed befor each participant. Input file name should be the participant id -1 (e.g. file no 0 for participant 1)

        Start the experiment if the input file is accurate.
    ButtonComponent start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start
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Flow
  Routine Experimenter
  Routine Instructions
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = training.xlsx
    loopType = sequential
    nReps = 1
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    Routine Start_Segment_Train
    Routine Training_Segment
    Routine Rating
    LoopInitiator sum_true loopType="TrialHandler"
      loopType = random
      nReps = summa
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      Routine Start_Summary
      LoopInitiator dummy_loop loopType="TrialHandler"
        loopType = random
        nReps = doSum
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        Routine Summary
      LoopTerminator dummy_loop
    LoopTerminator sum_true
    Routine Multiple_Choice_2
  LoopTerminator training
  Routine Start_Exp
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = sub-0_shortened_5cdts.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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      {'wav_file': 'Someday_74_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_035_of_116_2.wav', 'segment_text': "Barney wears a light blue sport coat and has thick white hair cropped very close to his head The whole place smells like cigar smoke and dust but there's something comforting about it I'm afraid my nervousness is obvious especially when I discover that the only way to sit in the one huge armchair opposite his desk is to sink into it and be swallowed I fight the chair for a minute trying to perch daintily on the edge and then give up and sit back which at least might make me look relaxed Francis Banks Barney Bellows", 'question': 'What is Barney Sparks wearing when the main character meets him?', 'C1': 'A. A black tuxedo', 'C2': 'B. A light blue sport coat', 'C3': 'C. A red sweater', 'C4': 'D. A white lab coat', 'C_correct': 'B. A light blue sport coat', 'duration': 29.69, 'summary': 'yes'},
      {'wav_file': 'Someday_54_condition-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_027_of_116_2.wav', 'segment_text': "It's made of navy blue quilted leather and has a gold chain instead of a strap and she told me once it was a college graduation gift from her parents She usually leaves it out on the table and she always lays one of our cloth napkins underneath it I'm fascinated by the bag because to my knowledge it's the single most expensive item I've ever seen up close but the napkin thing always bothers me as if she's implying our housekeeping isn't quite up to her standards Still Everett's perfectly nice and I want her to feel welcome here", 'question': "What is distinctive about Everett's Chanel bag?", 'C1': "A. It's bright red", 'C2': "B. It's made of velvet", 'C3': 'C. It has a gold chain strap', 'C4': "D. It's a gift from the narrator", 'C_correct': 'C. It has a gold chain strap', 'duration': 5.802, 'summary': 'yes'},
      {'wav_file': 'Someday_99_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_044_of_116_1.wav', 'segment_text': "There are the things we all know we're supposed to have monologue comedic and dramatic song up tempo and ballad but there's a serious lack of information beyond that Today I need a funny laugh but what else should I know how to do Roller skating maybe That seems to come up a lot lately Jokes I should know more jokes in case I ever get asked if I've heard any good jokes lately but I'm not a good joke teller I always mess up the endings Maybe I should try to memorize a knock knock joke at least just in case", 'question': 'What does the narrator feel she need to learn for auditions?', 'C1': 'A. Harseback riding', 'C2': 'B. Jokes', 'C3': 'C. Monologues', 'C4': 'D. Ballads', 'C_correct': 'B. Jokes', 'duration': 10.3575, 'summary': 'no'},
      {'wav_file': 'Someday_113_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_050_of_116_0.wav', 'segment_text': "She lives I think I need a manager Why do you need a manager I thought you just got an agent I did but they aren't getting me any auditions If you have no auditions what's there to manage A manager would help me get auditions How could a manager do that when the agents can't Well managers have fewer people so they can focus just on you And why do you have an agent at all Why not just have a manager You have to have an agent They're the only ones allowed to negotiate contracts Agents are franchised managers aren't", 'question': 'Why does the narrator want to get a manager?', 'C1': 'A. To help negotiate contracts', 'C2': 'B. To get auditions', 'C3': 'C. Because agents are expensive', 'C4': 'D. To manage the finances', 'C_correct': 'B. To get auditions', 'duration': 7.005, 'summary': 'yes'},
      {'wav_file': 'Someday_115_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_051_of_116_2.wav', 'segment_text': "All those people can't just be walking around starving and happening to look great all the time They must know something that the rest of us don't Or worse maybe there isn't a trick Maybe they are walking around hungry all the time Maybe that's the difference between being successful or unsuccessful Maybe I'm too weak I'm too concerned with feeling good to be willing to feel as bad as I should to be successful Why would feeling good be bad People spend their lives trying to feel good You're not supposed to walk around miserable all the time", 'question': "What is the narrator's concern about the successful people she sees?", 'C1': 'A. They are always happy', 'C2': 'B. They are always starving themselves', 'C3': 'C. They know a secret for good acting', 'C4': 'D. They are too weak to succeed', 'C_correct': 'B. They are always starving themselves', 'duration': 14.77, 'summary': 'yes'},
      {'wav_file': 'Someday_4_condition-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_005_of_116_3.wav', 'segment_text': "You told me you'd try if I let you I promised I'd make sure I take a deep breath and I bellow in my most diaphragmatically supported Shakespearean tone Dan come in Miraculously the left side of Dan's face appears through a crack in the door but it's not until he's confirmed my fully covered status and stepped all the way into the room leaning his oversized frame awkwardly against the corner bookshelf that I suddenly remember My hair", 'question': 'What does the narrator suddenly remember when Dan enters the room?', 'C1': 'A. Her hair', 'C2': 'B. A book', 'C3': 'C. Her appointment', 'C4': 'D. A phone call', 'C_correct': 'A. Her hair', 'duration': 5.986, 'summary': 'no'},
      {'wav_file': 'Someday_124_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_054_of_116_4.wav', 'segment_text': "If I come home to you eating a pint of Haagen Dazs and watching When Harry Met Sally I'm calling the police What are they going to do arrest me for being a clich√© So when the phone rings at 1130 that morning I lunge for it grabbing it on the second ring I'll pretend to Jane I'm in good spirits I'll act peppy as if I've been up for hours Hello this is Richard calling from Absolute Artists Is Franny there", 'question': 'Who calls the main character from Absolute Artists?', 'C1': 'A. Barney Sparks', 'C2': 'B. Richard', 'C3': 'C. Jane', 'C4': 'D. Dan', 'C_correct': 'B. Richard', 'duration': 28.72003125, 'summary': 'no'},
      {'wav_file': 'Someday_20_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_012_of_116_1.wav', 'segment_text': 'Upstairs the waiting room is crowded which means there must be a few different casting calls There are boys and girls near the age of the elevator twins a couple of men in their 50s both in suit and tie and several girls who remind me of me but a better more put together me the me who would play me in the TV movie of the fictional life of the real me I sign in Name time arrived time scheduled agency social security number', 'question': 'What observation does the narrator make about the individuals in the waiting room?', 'C1': 'A. They are all likely there for the same casting call', 'C2': 'B. They are unorganized and scattered', 'C3': 'C. They appear to be different versions of the narrator, better and more composed', 'C4': "D. They are unrelated to the narrator's field of work", 'C_correct': 'C. They appear to be different versions of the narrator, better and more composed', 'duration': 13.73, 'summary': 'no'},
      {'wav_file': 'Someday_32_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_018_of_116_0.wav', 'segment_text': "Navigating the crowd on the sidewalk is a challenge I like I'm running without touching anyone else on the street I'm a character in a human video game keeping my bubble of space from being invaded eyeing an open slot on the sidewalk speeding up to grab it before someone else does slowing down until I see another space working together with the strangers on the street as though we're all performing an elaborate dance perfectly choreographed for thousands of people I'm happy A guy I like got my number", 'question': 'How does the narrator feel while navigating the crowded sidewalk?', 'C1': 'A. Anxious', 'C2': 'B. Happy', 'C3': 'C. Frustrated', 'C4': 'D. Confused', 'C_correct': 'B. Happy', 'duration': 29.01996875, 'summary': 'yes'},
      {'wav_file': 'Someday_15_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_009_of_116_3.wav', 'segment_text': "Whenever Jane talks about Russell Blakely all I can picture is that line everybody was quoting from his last movie Steel Entrapment where he calls out to Cordelia Biscayne honey I'm home while hanging by one hand from the landing gear of a helicopter bare chested Today's special is from the set of Kill Time an assortment of bagels that were only out on the craft service table for about three hours but are not sadly accompanied by cream cheese and that Chinese rice thing that Dan likes which I don't think was too aggressively sneezed upon", 'question': 'What does Russell Blakely calls out to Cordelia Biscayne in the movie Steel Entrapment?', 'C1': 'A. "Sweetie I\'m out"', 'C2': 'B. "Baby I\'m back"', 'C3': 'C. "Darling I\'ve arrived"', 'C4': 'D. "Honey I\'m home"', 'C_correct': 'D. "Honey I\'m home"', 'duration': 29.3, 'summary': 'no'},
      {'wav_file': 'Someday_78_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_036_of_116_0.wav', 'segment_text': "And I would like to help you get started So he claps his hands together once for emphasis as if he's just pulled a rabbit out of his hat and wants to make sure the audience sees it I'm stunned He just said he wants to work with me I thought it would be so much harder to get anyone in the professional world to say that ever An actual real life agent wants to represent me I don't have to do this alone I'm shocked What is that", 'question': "What is the narrator's reaction to the agent's offer?", 'C1': 'A. She is excited and grateful', 'C2': 'B. She is stunned', 'C3': 'C. She is uninterested in the offer', 'C4': 'D. She expected the offer', 'C_correct': 'B. She is stunned', 'duration': 7.0425, 'summary': 'no'},
      {'wav_file': 'Someday_28_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_017_of_116_0.wav', 'segment_text': "He has some sort of accent almost a drawl He's from the south somewhere Maybe he grew up on a farm in Texas or Georgia Maybe he had chores in the barn every day and helped his father harvest corn He still hasn't looked away from me He stands perfectly still not shifting at all I can feel myself rocking back and forth on my feet I try to stay steady like he does but it's impossible for me to do I really like your work in class I say ducking my head Oh yeah", 'question': 'How does the narrator feel about the person she encounters on the street?', 'C1': 'A. She dislikes them', 'C2': 'B. She is indifferent', 'C3': 'C. She admires their work', 'C4': 'D. She is terrified', 'C_correct': 'C. She admires their work', 'duration': 28.1, 'summary': 'yes'},
      {'wav_file': 'Someday_6_condition-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_006_of_116_0.wav', 'segment_text': "Why I'm having audition anxiety dreams A wave of dread crashes over me as I remember When I looked at the year at a glance calendar and my brown leather file of facts last night I realized that as of today there are exactly six months left on the deal I made with myself when I first came to New York that I'd see what I could accomplish in three years But if I wasn't well on my way to having a real career as an actor by then I absolutely wouldn't keep at it after that", 'question': "What is the reason for the narrator's audition anxiety dreams?", 'C1': 'A. She forgot her lines in an audition', 'C2': "B. She's worried about a three-year career goal", 'C3': "C. She's excited about her upcoming auditions", 'C4': "D. She's afraid of flying to auditions", 'C_correct': "B. She's worried about a three-year career goal", 'duration': 5.944, 'summary': 'yes'},
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      {'wav_file': 'Someday_2_condition-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_004_of_116_1.wav', 'segment_text': "Successful actresses are disciplined people who wake up early to focus on their craft I told myself even ones who still make their living as waitresses like me I started leaving the alarm clock on the landing between Jane's room and mine so I'd have to actually get out of bed in order to turn it off instead of hitting snooze over and over like I normally do I also resolved to quit smoking again to stop losing purses wallets and umbrellas and to not eat any more cheese puffs not even on special occasions", 'question': 'What resolution does the narrator make about her lifestyle to become a successful actress?', 'C1': 'A. To wake up early and focus on her craft', 'C2': 'B. To quit smoking and stop losing personal items', 'C3': 'C. To stop eating cheese puffs, even on special occasions', 'C4': 'D. All of the above', 'C_correct': 'D. All of the above', 'duration': 6.07, 'summary': 'yes'},
      {'wav_file': 'Someday_43_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_023_of_116_1.wav', 'segment_text': "Then I'll call my dad and tell him I'm leaving New York You're doing the right thing honey he'll say Now you can get your teaching certificate I imagine what a relief it will be to have a real job I'll have a regular paycheck and a desk and a phone and a fax machine I'll have a computer which hopefully would come with someone to teach me how to use it And I'll have people to go out with sometimes after work for a drink at Bennigan's who'll me about their boyfriend or their kid or a project they're working on in their garage", 'question': 'What does the narrator think her father will say when she leaves New York?', 'C1': 'A. That she is doing the right thing', 'C2': 'B. That she should have tried harder', 'C3': 'C. That she can go back to New York if she wants to', 'C4': 'D. That she should have done it earlier', 'C_correct': 'A. That she is doing the right thing', 'duration': 11.2575, 'summary': 'yes'},
      {'wav_file': 'Someday_36_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_020_of_116_1.wav', 'segment_text': "Everyone already knows everyone knows I fell they saw everything I'm humiliated What's that I say trying to buy myself some time to figure out how to respond with dignity nice class I said huh Right Everyone seems to be doing well tonight Oh Right Yes they do Did you by any chance see my monologue No sorry but I heard part of it on the monitor sound like you really went for it Oh Thanks Yes I do think I went for it", 'question': 'How does the narrator feel after monologue?', 'C1': 'A. She is humiliated', 'C2': 'B. She is satisfied', 'C3': 'C. She is happy', 'C4': 'D. She is moved by it', 'C_correct': 'A. She is humiliated', 'duration': 7.4575, 'summary': 'no'},
      {'wav_file': 'Someday_35_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_020_of_116_0.wav', 'segment_text': "Who put that there Oh No is that what I said Yes that was it I have no idea why it doesn't even make sense Who put that there How stupid I just couldn't think of anything else They laughed though I think they laughed Maybe they gasped in horror No they definitely laughed when I said that They gasped when I fell that's what it was Was it a gasp of disgust were they merely expressing concern for my safety I can't remember", 'question': "What does the narrator wonder about the audience's reaction?", 'C1': 'A. Whether they laughed or gasped', 'C2': 'B. Whether they cried or screamed', 'C3': 'C. Whether they left the play', 'C4': 'D. Whether they were distracted', 'C_correct': 'A. Whether they laughed or gasped', 'duration': 11.04375, 'summary': 'yes'},
      {'wav_file': 'Someday_48_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_025_of_116_1.wav', 'segment_text': "But why not It's every actor's dream to perform on Broadway I protest and she gives me an indulgent smile I don't mean to shit on your dreams sweetie but I'm mainly out of show business these days This is as close as I want to be to that life she says putting her arm around Leighton's waist I just lost what the point of it all was", 'question': "What is every actor's dream according to the narrator?", 'C1': 'A. Performing in front of 1000 people', 'C2': 'B. Performing in a Hollywood movie', 'C3': 'C. Performing in an independent movie', 'C4': 'D. Performing in a Broadway play', 'C_correct': 'D. Performing in a Broadway play', 'duration': 5.18, 'summary': 'yes'},
      {'wav_file': 'Someday_93_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_041_of_116_0.wav', 'segment_text': "It doesn't even matter whether it's a real person or an actor playing a character and if the person or character is interesting in some way I put myself in his or her shoes imagining what it would feel like what I would say or do if I were that person I don't remember deciding to do this as a career I want to tell him There wasn't any one day where it came to me My mother died and I started pretending it didn't happen to me started imagining what it would be like to have someone else's life story and pretending became a relief", 'question': "What coping mechanism did the narrator develop after their mother's death?", 'C1': 'A. The narrator chose to openly discuss her career decisions', 'C2': 'B. The narrator decided to become an actor one specific day', 'C3': 'C. The narrator began to use imagination and pretending as a form of escape', 'C4': 'D. The narrator focused on the realism of the characters portrayed by actors', 'C_correct': 'C. The narrator began to use imagination and pretending as a form of escape', 'duration': 7.1725, 'summary': 'yes'},
      {'wav_file': 'Someday_83_condition-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_037_of_116_4.wav', 'segment_text': "I sound odd to myself as if I'm playing the part of a professional actress who has meetings all the time and is sort of blas√© about them I loved Barney Sparks I want to tell Dan but I'm suspicious of anything that seems too easy I'm not sure why I can't say that now and not sure why I didn't jump at the chance to say yes in Barney's office It feels like I'm an actor in an Italian movie from the 60s saying the placeholder lines into the camera waiting for the real ones that come later", 'question': 'What is the narrator suspicious of?', 'C1': 'A. Things that take too long', 'C2': 'B. Things that are hard to do', 'C3': 'C. Things that seem controversial', 'C4': 'D. Things that seem too easy', 'C_correct': 'D. Things that seem too easy', 'duration': 5.806, 'summary': 'yes'},
      {'wav_file': 'Someday_58_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_028_of_116_0.wav', 'segment_text': "Her profile is sharp her whole body a series of angles that have somehow Improbably folded themselves on their hinges into the soft chair There's something so regal and linear about her I can't imagine her ever collapsing into giggles or crying hysterically She's taking her time to consider what to say next in a way that suggests she's used to people waiting for her I wonder what that's like to never worry about filling the silence Her eyes eventually float back to me", 'question': "How does the narrator describe the woman's profile?", 'C1': 'A. Sharp', 'C2': 'B. Round', 'C3': 'C. Regal', 'C4': 'D. Hysterical', 'C_correct': 'A. Sharp', 'duration': 10.98, 'summary': 'yes'},
      {'wav_file': 'Someday_22_condition-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_013_of_116_1.wav', 'segment_text': "Want to go with me to that diner on 8th and get a salad in between Salad Oh yeah I'm supposed to eat more salad It just never seems appealing In fact I was already planning to go to that diner on 8th for my usual pre class dinner Grilled cheese french fries and the New York Times crossword puzzle But for some reason I find myself making an excuse I can't I have another you know torture session after this one", 'question': 'What was the narrator already planning to eat at the diner?', 'C1': 'A. Grilled cheese and fries', 'C2': 'B. Salad', 'C3': 'C. Pie', 'C4': 'D. Club sandwich', 'C_correct': 'A. Grilled cheese and fries', 'duration': 5.632, 'summary': 'no'},
      {'wav_file': 'Someday_18_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_011_of_116_1.wav', 'segment_text': "The D train between Brooklyn and Manhattan is one of my favorite lines because at one the train emerges from underground and goes high over the river along the Manhattan Bridge Sometimes I put on my headphones and listen to music Sometimes I do the New York Times crossword puzzle And sometimes I read But no matter what else I'm doing I consider it very bad luck if I forget to look up as the train crosses over the East River even just for a second before it goes back underground It's just a superstition", 'question': 'Why does the narrator always look up when the D train crosses the East River?', 'C1': 'A. To enjoy the view', 'C2': 'B. To avoid bad luck', 'C3': 'C. To read the subway signs', 'C4': "D. To see if it's raining", 'C_correct': 'B. To avoid bad luck', 'duration': 14.045, 'summary': 'yes'},
      {'wav_file': 'Someday_50_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_025_of_116_3.wav', 'segment_text': "It was a high concept half hour pilot he said Cutting edge was the exact phrase he used I believe He said it had taken some convincing to get me an audition since I had no television experience but they'd agreed to see me So I read the script and it didn't seem like a TV show to me but I'm used to reading plays where anything can happen in the world of someone's memory or whatever You were used to reading things that were abstract Leighton says Or imaginative not totally set in reality yes So I'm picturing what it could be if done correctly", 'question': 'What was the description given for the pilot in the story?', 'C1': 'A. A low-budget independent film', 'C2': 'B. A high concept half-hour pilot', 'C3': 'C. A traditional TV show format', 'C4': 'D. A full-length feature film', 'C_correct': 'B. A high concept half-hour pilot', 'duration': 14.89, 'summary': 'no'},
      {'wav_file': 'Someday_97_condition-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_043_of_116_0.wav', 'segment_text': "Yes Aren't you going to ask me about my show What Yes I'm sorry tell me Well I'm pretty excited actually I just got booked to do my one man show Insights in the basement of Hooligans Hooligans that's great Where is that again You know the Irish bar on Second Avenue it has the basement where Claudia did her poetry reading Oh yeah that Hooligans yeah such a great space", 'question': 'Where will the one-man show be performed?', 'C1': 'A. In a theater on Broadway', 'C2': 'B. In the basement of an Irish bar', 'C3': "C. At Claudia's poetry reading", 'C4': 'D. In a small town in Connecticut', 'C_correct': 'B. In the basement of an Irish bar', 'duration': 5.76, 'summary': 'yes'},
      {'wav_file': 'Someday_9_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_008_of_116_1.wav', 'segment_text': 'For the Stevie Nicks fan club Jane seriously say something helpful She tilted her head studying me carefully Honestly Franny all I can think of to say is you look like you work at a really great bakery in Maine I have class tonight after my audition so today I go for young mom meets acting class neutral black sweater black tights short black wool skirt and my Doc Martin Oxford lace up shoes Not super mom ish but practical for walking', 'question': 'What does Jane say the narrator looks like?', 'C1': 'A. Like she works at a bakery', 'C2': 'B. Like she is a movie star', 'C3': 'C. Like she is a student at Oxford', 'C4': 'D. Like she is a mom', 'C_correct': 'A. Like she works at a bakery', 'duration': 15.035, 'summary': 'yes'},
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    Routine Start_Segment
    Routine Training_Segment
    Routine Rating
    LoopInitiator sum_true_exp loopType="TrialHandler"
      loopType = random
      nReps = summa
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      Routine Start_Sum_Exp
      LoopInitiator dummy_loop_exp loopType="TrialHandler"
        loopType = random
        nReps = doSumexp
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        Routine Summary
      LoopTerminator dummy_loop_exp
    LoopTerminator sum_true_exp
    Routine Multiple_Choice_2
  LoopTerminator experiment
  Routine Thanks
