PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1512, 982]
  expName = speech_rate
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will hear 2 audio segments with varying speeds of speech. You will be asked to continuously indicate your level of comprehension using the slider.

        While listening to the first segment, please use your *left hand* for the slider.

        There will be a break between 2 segments. You can use this time to rest. Before you play the second one, we will ask you to switch the slider position so you can use it with your *right hand*.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next
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    CodeComponent slider_setup
      Code Type = Py
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      Before Experiment:
        import serial
        import time
        import serial.tools.list_ports
        import multiprocessing as mp
        import csv
        import sys

        def workerBody(participant, session, stop, trial, ready, queue):
            output_data = []
            ports = serial.tools.list_ports.comports()
            for port, desc, hwid in sorted(ports):
                if desc == "Feather M0 Express":
                    port2 = port

            ser = serial.Serial(port2, 500000, timeout=0.01)
            ready.set()
            while not stop.is_set():
                ser.readline()
                if trial.is_set():
                    ready.clear()
                    trial_start_time = time.monotonic()
                    trial_offset = 0
                    while trial.is_set():
                        line = ser.readline()
                        if trial_offset == 0:
                            trial_offset = time.monotonic()

                        try:
                            output_data.append(
                                (int(line.decode("utf-8").split(' ')[0]), int(line.decode("utf-8").split(' ')[1])))
                        except:
                            print("Warning: missing frame")

                    try:
                        real_time_elapsed = 1000 * (time.monotonic() - trial_start_time)
                        drift = real_time_elapsed - (output_data[-1][1] - output_data[0][1])
                        print((drift / (output_data[-1][1] - output_data[0][1])) * 100)

                        offset = output_data[0][1]
                        for i, pt in enumerate(output_data):
                            output_data[i] = (pt[0], pt[1] - offset + ((trial_offset - trial_start_time) * 1000))

                        with open(f"{_thisDir}/data/slider_{participant}_{session}_{queue.get()}.csv",'w') as out:
                            csv_out=csv.writer(out)
                            csv_out.writerow([drift, real_time_elapsed])
                            csv_out.writerow(['value','time'])
                            for row in output_data:
                                csv_out.writerow(row)

                    except Exception as error:
                        print("Error occured while processing last trial. Data discarded")
                        print(error)

                    output_data.clear()
                    ready.set()
            ser.close()


        class Slider:
            def __init__(self, participant, session):
                mp.set_start_method('spawn')
                self.stop = mp.Event()
                self.trial = mp.Event()
                self.ready = mp.Event()
                self.queue = mp.Queue()
                self.proc = mp.Process(target=workerBody, args=(
                    participant, session, self.stop, self.trial, self.ready, self.queue))
                self.proc.start()

                while not self.ready.is_set():
                    if not self.proc.is_alive():
                        raise Exception("Error: Slider process exited")
                    time.sleep(0.01)

            def start_trial(self, wav_file):
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)
                    self.trial.set()
                    self.queue.put(wav_file)

            def stop_trial(self):
                self.trial.clear()
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)

            def __del__(self):
                self.stop.set()
                self.proc.join()
      Begin Experiment:
        myslider = Slider(expInfo['participant'], expInfo['session'])
      End Experiment:
        del myslider
  Routine Training_Segment
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    SoundComponent Experimen_audio
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0.00
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent slider_rt
      Code Type = Py
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      Begin Routine:
        myslider.start_trial(wav_file)
      End Routine:
        myslider.stop_trial()
    PolygonComponent polygon
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine Rating
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.2
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      size = (0.2, 0.1)
      startVal [condition] = slider.rating
      text = Confirm
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.2
      text = How well did you understand it?
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if summary == "yes":
            summa = 1
        else:
            summa = 0
  Routine Multiple_Choice
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    FormComponent form
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Training_data.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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    ButtonComponent Confirm
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Confirm
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  Routine Multiple_Choice_2
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    TextComponent Question
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent Option_1
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C1
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    TextComponent Option_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C2
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    TextComponent Option_3
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C3
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    TextComponent Option_4
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C4
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    ButtonComponent A
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent B
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.1,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent C
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.2,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent D
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
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  Routine Summary
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    TextComponent countdown
      letterHeight = 0.1
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $int(round(30 - t, 3))
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.02
      placeholder [set every repeat] = Summarize here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ButtonComponent summary_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text [set every repeat] = Done
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  Routine Start_Summary
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have maximum 30 seconds to write.
        You can click on the 'Done' button if you finish earlier than 30 seconds.
    ButtonComponent summary_button
      bold = True
      callback = button_pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if button_pressed == "next":
            doSum = 1
        else:
            doSum = 0
  Routine Start_Segment
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    ButtonComponent Play
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider and get ready to use it!
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  Routine Start_Exp
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    TextComponent Start_exp
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press the button below to start the experiment.
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    ButtonComponent Start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine Start_Sum_Exp
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have maximum 30 seconds to write.
        You can click on the 'Done' button if you finish earlier than 30 seconds.
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if button_pressed == "next":
            doSumexp = 1
        else:
            doSumexp = 0
    ButtonComponent sum_button
      bold = True
      callback = button_pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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  Routine Start_Segment_Train
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    ButtonComponent Play_train
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent Trial_counter_train
      letterHeight = 0.02
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Completed = ' +str(training.thisN) + '\n Remaining = ' + str(training.nRemaining + 1)
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    TextComponent text_5
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider.
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  Routine summary_true
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  Routine Thanks
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    TextComponent text_7
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Thank you!
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  Routine Experimenter
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    TextComponent reminder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dear Experimenter,

        Please make sure that the input file is changed befor each participant. Input file name should be the participant id -1 (e.g. file no 0 for participant 1)

        Start the experiment if the input file is accurate.
    ButtonComponent start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start
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  Routine Break
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    TextComponent Start_exp_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        You can take a break to rest.

        When you are ready, please position your *right hand* on the slider.

        Press the button below to start the second half.
    ButtonComponent Start_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine Segment_2
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    SoundComponent Experimen_audio_2
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0.00
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent slider_rt_2
      Code Type = Py
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      Begin Routine:
        myslider.start_trial(wav_file)
      End Routine:
        myslider.stop_trial()
    PolygonComponent polygon_2
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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Flow
  Routine Instructions
  Routine Start_Exp
  Routine Start_Segment
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'wav_file': 'someday_continuous_spedup_part1.wav', 'duration': 10.03}]
    conditionsFile = part1.xlsx
    loopType = random
    nReps = 1
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    Routine Training_Segment
  LoopTerminator trials
  Routine Break
  Routine Start_Segment
  LoopInitiator trials_2 loopType="TrialHandler"
    conditions = [{'wav_file': 'someday_continuous_spedup_part2.wav', 'duration': 10.03}]
    conditionsFile = part2.xlsx
    loopType = random
    nReps = 1
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    Routine Segment_2
  LoopTerminator trials_2
  Routine Thanks
