PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = speech_rate
  keyboardBackend = Pyglet
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Experimenter
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    TextComponent reminder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dear Experimenter,

        Please make sure that the input file is changed befor each participant. Input file name should be the participant id -1 (e.g. file no 0 for participant 1)

        Start the experiment if the input file is accurate.
    ButtonComponent start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will hear 8 different stories with varying speeds. There is background noise behind each of the stories.

        Before each story, you will get asked to use the slider or not whilst listening.
        This slider is for you to continiously report how easily you are understanding.

        When your index finger is closest to your thumb, it indicates not understanding at all. When it is at the furthest point from your thumb (at the top), it indicates full comprehension.

        After the stories you will answer 5 multiple choice questions about the story content.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start
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    CodeComponent slider_code
      Code Type = Py
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      Before Experiment:
        import pandas as pd
        import random
        import serial
        import time
        import serial.tools.list_ports
        import multiprocessing as mp
        import csv
        import sys


        question_df = pd.read_excel('questions_trim.xlsx')
        used_questions = {}
        questions_by_group = {}
        for group in question_df['question_id'].unique():
            group_questions = question_df[question_df['question_id'] == group]
            questions_by_group[group] = group_questions.sample(frac=1).reset_index(drop=True)


        def workerBody(participant, session, stop, trial, ready, queue):
            output_data = []
            ports = serial.tools.list_ports.comports()
            for port, desc, hwid in sorted(ports):
                if desc == "Feather M0 Express":
                    port2 = port

            ser = serial.Serial(port2, 500000, timeout=0.01)
            ready.set()
            while not stop.is_set():
                ser.readline()
                if trial.is_set():
                    ready.clear()
                    trial_start_time = time.monotonic()
                    trial_offset = 0
                    while trial.is_set():
                        line = ser.readline()
                        if trial_offset == 0:
                            trial_offset = time.monotonic()

                        try:
                            output_data.append(
                                (int(line.decode("utf-8").split(' ')[0]), int(line.decode("utf-8").split(' ')[1])))
                        except:
                            print("Warning: missing frame")

                    try:
                        real_time_elapsed = 1000 * (time.monotonic() - trial_start_time)
                        drift = real_time_elapsed - (output_data[-1][1] - output_data[0][1])
                        print((drift / (output_data[-1][1] - output_data[0][1])) * 100)

                        offset = output_data[0][1]
                        for i, pt in enumerate(output_data):
                            output_data[i] = (pt[0], pt[1] - offset + ((trial_offset - trial_start_time) * 1000))

                        with open(f"{_thisDir}/data/slider_{participant}_{session}_{queue.get()}.csv",'w') as out:
                            csv_out=csv.writer(out)
                            csv_out.writerow([drift, real_time_elapsed])
                            csv_out.writerow(['value','time'])
                            for row in output_data:
                                csv_out.writerow(row)

                    except Exception as error:
                        print("Error occured while processing last trial. Data discarded")
                        print(error)

                    output_data.clear()
                    ready.set()
            ser.close()


        class Slider:
            def __init__(self, participant, session):
                mp.set_start_method('spawn')
                self.stop = mp.Event()
                self.trial = mp.Event()
                self.ready = mp.Event()
                self.queue = mp.Queue()
                self.proc = mp.Process(target=workerBody, args=(
                    participant, session, self.stop, self.trial, self.ready, self.queue))
                self.proc.start()

                while not self.ready.is_set():
                    if not self.proc.is_alive():
                        raise Exception("Error: Slider process exited")
                    time.sleep(0.01)

            def start_trial(self, wav_file):
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)
                    self.trial.set()
                    self.queue.put(wav_file)

            def stop_trial(self):
                self.trial.clear()
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)

            def __del__(self):
                self.stop.set()
                self.proc.join()


        current_questions = pd.DataFrame()
        question_index = 0
      Begin Experiment:
        myslider = Slider(expInfo['participant'], expInfo['session'])
      End Experiment:
        del myslider
  Routine Thanks
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    TextComponent text_7
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you!
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  Routine choose_questions
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import pandas as pd

        # Load questions if not already loaded
        if not hasattr(expInfo, 'allQuestions'):
            expInfo['allQuestions'] = pd.read_excel('questions_trimmed.xlsx')

        # Get the current story audio from the conditions file
        current_audio = wav_file  # wav_file should come from stories.xlsx

        # Filter the full question set
        filtered = expInfo['allQuestions'][expInfo['allQuestions']['wav_file'] == current_audio]

        # Check if enough questions exist
        if len(filtered) < 5:
            raise ValueError(f"Not enough questions for {current_audio}. Found {len(filtered)}")

        # Randomly select 5
        selected = filtered.sample(n=5).reset_index(drop=True)

        # Store in experiment for access in the loop
        thisExp.selectedQuestions = selected
        thisExp.questionIndex = 0

        print("Running choose_questions")
        print(f"Audio: {wav_file}")
        print("Selected questions:")
        print(thisExp.selectedQuestions)

        print("SELECTING QUESTIONS FOR:", wav_file)

        filtered = expInfo['allQuestions'][expInfo['allQuestions']['wav_file'] == wav_file]
        print("Filtered rows found:", len(filtered))

        selected = filtered.sample(n=5).reset_index(drop=True)
        selectedQuestions = selected.to_dict('records')

        print("Selected Questions:")
        print(selectedQuestions)
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_experiment
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        import pandas as pd

        # Load all questions once into a global variable
        allQuestions = pd.read_excel('questions_trimmed.xlsx')
  Routine play_story
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    SoundComponent story_audio
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0
      stopWithRoutine = False
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    PolygonComponent polygon
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = story_duration
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if slider.strip().lower() == 'yes' and myslider is not None:
            myslider.start_trial(wav_file)

        print(f">>> Playing story: {wav_file} | group: {question_id}")
        story_audio.setSound(wav_file, secs=-1)
        story_duration = story_audio.getDuration()
      End Routine:
        if slider.strip().lower() == 'yes' and myslider is not None:
            try:
                myslider.stop_trial()
            except Exception as e:
                print("Error stopping slider trial:", e)
  Routine multiple_choice
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    TextComponent Question
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    TextComponent Option_1
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    TextComponent Option_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    TextComponent Option_3
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    TextComponent Option_4
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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    ButtonComponent A
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent B
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.1,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent C
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.2,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent D
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        this_question = current_questions.iloc[question_index]

        Question.setText(this_question['question'])
        Option_1.setText(this_question['C1'])
        Option_2.setText(this_question['C2'])
        Option_3.setText(this_question['C3'])
        Option_4.setText(this_question['C4'])

        correct_answer = this_question['C_correct']
      End Routine:
        # Detect which button was clicked
        if A.isClicked:
            given = 'a'
        elif B.isClicked:
            given = 'b'
        elif C.isClicked:
            given = 'c'
        elif D.isClicked:
            given = 'd'
        else:
            given = None  # No click detected

        # Save question data
        thisExp.addData(f'q{question_index+1}_text', this_question['question'])
        thisExp.addData(f'q{question_index+1}_correct', correct_answer)
        thisExp.addData(f'q{question_index+1}_given', given)

        # Compare response to correct answer (first letter, case-insensitive)
        if given:
            is_correct = given.lower() == correct_answer[0].lower()
        else:
            is_correct = False

        thisExp.addData(f'q{question_index+1}_correct_bool', is_correct)

        # Increment index for next question
        question_index += 1
  Routine Rating
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.2
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = slider.rating
      text = Click here
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      text = How well did you understand?
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if summary == "yes":
            summa = 1
        else:
            summa = 0
  Routine slider_notice
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    TextComponent slider_text
      font = Open Sans 
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent skip_slider_notice
      Code Type = Py
      Begin Routine:
        group = wav_file[0]
        question_id = group

        # Always grab the next 5 (first or second time)
        used_questions[group] = questions_by_group[group].iloc[:5]
        questions_by_group[group] = questions_by_group[group].iloc[5:]

        # Shuffle and assign to current_questions
        current_questions = used_questions[group].sample(frac=1).reset_index(drop=True)
        question_index = 0

        try:
            if slider.strip().lower() == 'yes':
                slider_text.setText("Use the slider now.")
            else:
                slider_text.setText("Do not use the slider now.")
        except Exception as e:
            print(f"Failed to set slider_text: {e}")
            slider_text.setText("Slider instruction not available.")
    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine train_story_sound
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  Routine slider_notice_training
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    TextComponent text_3
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        This is a short training round to get used to the experiment and slider.

        Please use the slider during this story.
    ButtonComponent button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine transition
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    TextComponent text_4
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        That’s the end of the training round.
        The real experiment will now begin.
    ButtonComponent Start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine train_play_story
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    PolygonComponent polygon_2
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    SoundComponent train_sound
      sound [set every repeat] = Someday_101_condition_new1.5.wav
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        myslider.start_trial("Someday_101_condition_new1.5.wav")
      End Routine:
        myslider.stop_trial()
  Routine train_play_story_sped
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    SoundComponent sound_1
      sound [set every repeat] = train_audio_sped1.5.wav
      startVal [time (s)] = 0
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    PolygonComponent polygon_3
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 27
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        myslider.start_trial("train_audio_sped1.5.wav")
      End Routine:
        myslider.stop_trial()
  Routine No_slider
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Do not use the slider for this story
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  Routine slider_notice_training2
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    TextComponent text_6
      font = Open Sans 
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        This is a short training round to get used to the experiment and slider.

        Reset slider. Please use the slider during this story.
    ButtonComponent button_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine multiple_choice_training
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    TextComponent Pregunta
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = What color hair does Arthur have?
      units = height
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    TextComponent either_a
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = A. Blonde
      units = height
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    TextComponent either_b
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = B. Ginger
      units = height
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    TextComponent either_c
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = C. Dark brown
      units = height
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    TextComponent either_d
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = D. Grey
      units = height
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    ButtonComponent a
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent b
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.1,-0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
      units = height
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    ButtonComponent c
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.2,-0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0
      text = C
      units = height
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    ButtonComponent d
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
      units = height
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  Routine multiple_c_t_2
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    TextComponent Pregunt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Who is the speaker?
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    TextComponent text_8
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = A. A chef
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    TextComponent text_9
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = B. A photographer
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    TextComponent text_10
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = C. A singer
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    TextComponent text_11
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = D. An actress
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    ButtonComponent button_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent button_7
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.1, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent button_8
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.2, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent button_9
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
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  Routine confirm_slider
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        try:
            if slider.strip().lower() == 'yes':
                confirm_message = "Confirm you have reset the slider and you WILL use it."
            else:
                confirm_message = "Confirm you will NOT use the slider."
        except Exception as e:
            print(f"Slider variable error: {e}")
            confirm_message = "Slider condition unknown. Please ask the researcher."
        print("Confirm message:", confirm_message)
    ButtonComponent confirming
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Confirm
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    TextComponent confirm_text
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $confirm_message
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Flow
  Routine Instructions
  Routine slider_notice_training
  Routine train_play_story
  Routine multiple_choice_training
  Routine slider_notice_training2
  Routine train_play_story_sped
  Routine multiple_c_t_2
  Routine transition
  LoopInitiator loop_stories loopType="TrialHandler"
    conditionsFile = sub-30.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'wav_file': 'fox_story_noise.wav', 'slider': 'yes'},
      {'wav_file': 'mouse_sped_noise.wav', 'slider': 'no'},
      {'wav_file': 'grasshopper_sped_noise.wav', 'slider': 'yes'},
      {'wav_file': 'mouse_story_noise.wav', 'slider': 'yes'},
      {'wav_file': 'wind_story_noise.wav', 'slider': 'no'},
      {'wav_file': 'grasshopper_story_noise.wav', 'slider': 'no'},
      {'wav_file': 'fox_sped_noise.wav', 'slider': 'no'},
      {'wav_file': 'wind_sped_noise.wav', 'slider': 'yes'}]
    Routine slider_notice
    Routine confirm_slider
    Routine play_story
    LoopInitiator loop_questions loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      conditions:
        [OrderedDict([('story_id', 'g3'), ('question', 'What was the Ant carrying?'), ('C1', 'A. Book'), ('C2', 'B. Leaf'), ('C3', 'C. Corn Kernel'), ('C4', 'D. Stick'), ('C_correct', 'C. Corn kernel'), ('question_id', 'g')]),
        OrderedDict([('story_id', 'g1'), ('question', 'What did the squirrel say to the ant?'), ('C1', 'A. That it was a nice day'), ('C2', 'B. To carry on working'), ('C3', 'C. To be happier today'), ('C4', 'D. There was no squirrel'), ('C_correct', 'D. There was no squirrel'), ('question_id', 'g')]),
        OrderedDict([('story_id', 'g2'), ('question', 'What did the Grasshopper like to do?'), ('C1', 'A. Work'), ('C2', 'B. Sleep all day '), ('C3', 'C. Eat and make music'), ('C4', 'D. Clean his house'), ('C_correct', 'C. Eat and make music'), ('question_id', 'g')]),
        OrderedDict([('story_id', 'g10'), ('question', 'Why was the Grasshopper in a difficult situation later?'), ('C1', 'A. He gave his food away'), ('C2', 'B. He got lost in the snow'), ('C3', 'C. He was busy working'), ('C4', 'D. He hadn’t planned ahead'), ('C_correct', 'D. He hadn’t planned ahead'), ('question_id', 'g')]),
        OrderedDict([('story_id', 'g5'), ('question', 'Why was the Ant working so hard?'), ('C1', 'A. To build a house'), ('C2', 'B. To get ready for winter'), ('C3', 'C. To win a race'), ('C4', 'D. To impress someone'), ('C_correct', 'B. To get ready for winter'), ('question_id', 'g')])]
      Routine multiple_choice
    LoopTerminator loop_questions
  LoopTerminator loop_stories
  Routine Thanks
