PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = speech_rate
  keyboardBackend = Pyglet
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will hear 150 audio segments with varying speeds of speech and durations. You will be asked to:

        1. While listening to each segment, continuously indicate your level of comprehension using the slider.

        2. After the listening, rate your understanding on a scale from 1 to 10.

        3. Give a written summary of what you heard.

        4. Answer a multiple-choice question.

        The segments you will hear are about an actress named Franny living in NYC with her two flatmates, Jane and Dan.

        Don't worry if it's not clear yet! We have two training rounds with the slowest and fastest speeds.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start Trial
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    CodeComponent slider_setup
      Code Type = Py
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      Before Experiment:
        import serial
        import time
        import serial.tools.list_ports
        import multiprocessing as mp
        import csv
        import sys

        def workerBody(participant, session, stop, trial, ready, queue):
            output_data = []
            ports = serial.tools.list_ports.comports()
            for port, desc, hwid in sorted(ports):
                if desc == "Feather M0 Express":
                    port2 = port

            ser = serial.Serial(port2, 500000, timeout=0.01)
            ready.set()
            while not stop.is_set():
                ser.readline()
                if trial.is_set():
                    ready.clear()
                    trial_start_time = time.monotonic()
                    trial_offset = 0
                    while trial.is_set():
                        line = ser.readline()
                        if trial_offset == 0:
                            trial_offset = time.monotonic()

                        try:
                            output_data.append(
                                (int(line.decode("utf-8").split(' ')[0]), int(line.decode("utf-8").split(' ')[1])))
                        except:
                            print("Warning: missing frame")

                    try:
                        real_time_elapsed = 1000 * (time.monotonic() - trial_start_time)
                        drift = real_time_elapsed - (output_data[-1][1] - output_data[0][1])
                        print((drift / (output_data[-1][1] - output_data[0][1])) * 100)

                        offset = output_data[0][1]
                        for i, pt in enumerate(output_data):
                            output_data[i] = (pt[0], pt[1] - offset + ((trial_offset - trial_start_time) * 1000))

                        with open(f"{_thisDir}/data/slider_{participant}_{session}_{queue.get()}.csv",'w') as out:
                            csv_out=csv.writer(out)
                            csv_out.writerow([drift, real_time_elapsed])
                            csv_out.writerow(['value','time'])
                            for row in output_data:
                                csv_out.writerow(row)

                    except Exception as error:
                        print("Error occured while processing last trial. Data discarded")
                        print(error)

                    output_data.clear()
                    ready.set()
            ser.close()


        class Slider:
            def __init__(self, participant, session):
                mp.set_start_method('spawn')
                self.stop = mp.Event()
                self.trial = mp.Event()
                self.ready = mp.Event()
                self.queue = mp.Queue()
                self.proc = mp.Process(target=workerBody, args=(
                    participant, session, self.stop, self.trial, self.ready, self.queue))
                self.proc.start()

                while not self.ready.is_set():
                    if not self.proc.is_alive():
                        raise Exception("Error: Slider process exited")
                    time.sleep(0.01)

            def start_trial(self, wav_file):
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)
                    self.trial.set()
                    self.queue.put(wav_file)

            def stop_trial(self):
                self.trial.clear()
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)

            def __del__(self):
                self.stop.set()
                self.proc.join()
      Begin Experiment:
        myslider = Slider(expInfo['participant'], expInfo['session'])
      End Experiment:
        del myslider
  Routine Training_Segment
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    SoundComponent Experimen_audio
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0.00
      stopWithRoutine = False
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    CodeComponent slider_rt
      Code Type = Py
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      Begin Routine:
        myslider.start_trial(wav_file)
      End Routine:
        myslider.stop_trial()
    PolygonComponent polygon
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine Rating
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.2
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      size = (0.2, 0.1)
      startVal [condition] = slider.rating
      text = Confirm
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.2
      text = How well did you understand it?
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if summary == "yes":
            summa = 1
        else:
            summa = 0
  Routine Multiple_Choice
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    FormComponent form
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Training_data.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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    ButtonComponent Confirm
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Confirm
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  Routine Multiple_Choice_2
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    TextComponent Question
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent Option_1
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C1
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    TextComponent Option_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C2
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    TextComponent Option_3
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C3
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    TextComponent Option_4
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C4
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    ButtonComponent A
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent B
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.1,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent C
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.2,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent D
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
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  Routine Summary
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    TextComponent countdown
      letterHeight = 0.1
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $int(round(15 - t, 3))
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.02
      placeholder [set every repeat] = Type keywords here!
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine Start_Summary
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have 15 seconds to write.
        If you're unable to report anything, you may choose to skip the verbal summary by clicking on the 'Skip Summary' button.
    ButtonComponent summary_button
      bold = True
      callback = button_pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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    ButtonComponent skip_button
      bold = True
      callback = button_pressed= "skip"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = I didn't understand anything
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if button_pressed == "next":
            doSum = 1
        else:
            doSum = 0
  Routine Start_Segment
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    ButtonComponent Play
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent Trial_counter
      letterHeight = 0.02
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(round((experiment.thisN / experiment.nTotal) * 100)) + ' %' 
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    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider.
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  Routine Start_Exp
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    TextComponent Start_exp
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press the button below to start the experiment.
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    ButtonComponent Start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine Start_Sum_Exp
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have 15 seconds to write.
        If you're unable to report anything, you may choose to skip the verbal summary by clicking on the 'Skip Summary' button.
    ButtonComponent summary_button_exp
      bold = True
      callback = pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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    ButtonComponent skip_button_exp
      bold = True
      callback = pressed= "skip"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = I didn't understand anything
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if pressed == "next":
            doSumexp = 1
        else:
            doSumexp = 0
  Routine Start_Segment_Train
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    ButtonComponent Play_train
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent Trial_counter_train
      letterHeight = 0.02
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Completed = ' +str(training.thisN) + '\n Remaining = ' + str(training.nRemaining + 1)
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    TextComponent text_5
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider.
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  Routine summary_true
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Flow
  Routine Instructions
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = training.xlsx
    loopType = sequential
    nReps = 1
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    Routine Start_Segment_Train
    Routine Training_Segment
    Routine Rating
    LoopInitiator sum_true loopType="TrialHandler"
      loopType = random
      nReps = summa
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      Routine Start_Summary
      LoopInitiator dummy_loop loopType="TrialHandler"
        loopType = random
        nReps = doSum
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        Routine Summary
      LoopTerminator dummy_loop
    LoopTerminator sum_true
    Routine Multiple_Choice_2
  LoopTerminator training
  Routine Start_Exp
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = sub-3_shortened.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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      {'wav_file': 'Someday_80_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_037_of_116_1.wav', 'segment_text': "I'm happy someone's up happy not to come home to a darkened house after the long day I've had Very good he says looking impressed It's not that hard to recognize You must have rented it five times already this month I know he says smiling sheepishly I hope I'm not driving you guys crazy Jane was watching it for a while but gave up and went to sleep She said the last time she sat through the whole thing she dreamt she was eaten by her pillow It's almost over Want to watch the end with me", 'question': 'What did Jane see in her dream the last time she saw the movie?', 'C1': 'A. That is was flying with a penguin', 'C2': 'B. That she was sailing during a storm', 'C3': 'C. That she was chased by a pirate', 'C4': 'D. That she was eaten by her pillow', 'C_correct': 'D. That she was eaten by her pillow', 'duration': 29.32003125, 'summary': 'yes'},
      {'wav_file': 'Someday_45_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_024_of_116_1.wav', 'segment_text': "She's one of my best friends in class but I wonder sometimes how she feels about having gone from the lead of a hit TV show to commercials which is mainly what she does now and not the kind where she's playing Dina Shannon formerly of the hit show There's Pierre but just a regular actor pretending to like one brand of orange juice over another Anything she says flicking an ash on the ground Um yeah actually I got two callbacks with agencies Yeah she says you only need one", 'question': 'What show did Dina, the actress, used to lead?', 'C1': 'A. Friends', 'C2': "B. There's Pierre", 'C3': 'C. Cordelia Biscayne', 'C4': 'D. The House of Mirth', 'C_correct': "B. There's Pierre", 'duration': 28.97003125, 'summary': 'no'},
      {'wav_file': 'Someday_122_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_054_of_116_2.wav', 'segment_text': "When I first started watching it was just for a few minutes right after Lisa and before the first commercial break I was more fascinated than interested I would use the show as a kind of acting exercise challenging myself with the hokey dialogue saying the lines out loud to myself just to see if I could make the scenes feel more real than the actors on the show did I wondered if it was the actor's fault that the whole thing seemed so ridiculous or if there's truly nothing you can do to make it less phony given how phony it looks", 'question': 'How does the narrator approch the show?', 'C1': 'A. As a truly fascinating show', 'C2': 'B. As an acting practice', 'C3': 'C. She never watches it', 'C4': 'D. As a way to pass some quality time', 'C_correct': 'B. As an acting practice', 'duration': 12.928125, 'summary': 'no'},
      {'wav_file': 'Someday_85_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_038_of_116_1.wav', 'segment_text': "He hands me a paper badge with my name printed on it and says Yes it's okay for me to go up The elevator empties out around the 20th floor so I quickly try to use the smoked mirror walls to check my face and hair and outfit I'm wearing my black stretchy turtleneck with my black wool mini skirt black tights and Doc Martens lace up boots And now I can see in the reflection in the elevator mirror that the skirt is too short I try to pull it down but then my sweater isn't long enough and if I pull the skirt down to where it looks better an inch of my stomach shows", 'question': 'What does the narrator realize about her outfit when she checks her reflection?', 'C1': 'A. Her turtleneck is too tight', 'C2': "B. Her boots don't match", 'C3': 'C. Her skirt is too short', 'C4': 'D. Her hair is a mess', 'C_correct': 'C. Her skirt is too short', 'duration': 13.15125, 'summary': 'no'},
      {'wav_file': 'Someday_117_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_052_of_116_1.wav', 'segment_text': "Maybe bagels are my problem Although one bagel doesn't seem like a lot of food I decide I will finish the bagel but not eat anything the rest of the day Except maybe a salad for dinner or soup No soup has hidden stuff in it Yes I'm fairly certain soup is another food that seems innocent but is actually fattening Chicken broth that only has like seven calories Can I get chicken broth at the deli Where can I get chicken broth You don't need to change anything", 'question': 'What conclusion does the narrator reach about soup?', 'C1': 'A. Soup is always low in calories', 'C2': 'B. Soup is a hidden source of calories', 'C3': 'C. Soup is the healthiest food option', 'C4': 'D. Soup is not a good choice for dinner', 'C_correct': 'B. Soup is a hidden source of calories', 'duration': 6.78, 'summary': 'yes'},
      {'wav_file': 'Someday_39_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_021_of_116_1.wav', 'segment_text': "People who are admired for holding it together are not people who are about to get agents They're people who are recovering from cancer or undergoing a murder trial And I dropped a section I add hoping he'll say he didn't notice Yeah I know but I only know because I'm obsessed with that guy's work No one will dock you for that It's not exactly a glowing review but he doesn't seem totally horrified Still he's avoiding the thing I most want to know But when I fell I mean how bad was it", 'question': 'What does the narrator hope the person they are talking to will say?', 'C1': "A. That he didn't notice the mistake", 'C2': 'B. That he noticed the dropped section', 'C3': 'C. That he wants to be an agent', 'C4': "D. That he's obsessed with the narrator's work", 'C_correct': "A. That he didn't notice the mistake", 'duration': 14.61496875, 'summary': 'yes'},
      {'wav_file': 'Someday_83_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_037_of_116_4.wav', 'segment_text': "I sound odd to myself as if I'm playing the part of a professional actress who has meetings all the time and is sort of blas√© about them I loved Barney Sparks I want to tell Dan but I'm suspicious of anything that seems too easy I'm not sure why I can't say that now and not sure why I didn't jump at the chance to say yes in Barney's office It feels like I'm an actor in an Italian movie from the 60s saying the placeholder lines into the camera waiting for the real ones that come later", 'question': 'What is the narrator suspicious of?', 'C1': 'A. Things that take too long', 'C2': 'B. Things that are hard to do', 'C3': 'C. Things that seem controversial', 'C4': 'D. Things that seem too easy', 'C_correct': 'D. Things that seem too easy', 'duration': 14.515, 'summary': 'no'},
      {'wav_file': 'Someday_133_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_073_of_116_3.wav', 'segment_text': "I shower and use the diffuser to dry my hair. I can't hear a thing with the water running and the blow dryer on, so I can't tell if the phone already rang. But I won't allow myself to check, not just yet. I put on some makeup, and then I decide I'll borrow those dangly earrings from Jane, requiring me to cross the landing from my room to hers. It's a challenge, but I look straight ahead and don't give in, even though I'm desperate to sneak just the tiniest glance at the machine. I run back to my room across the landing, eyes up, and pull on jeans, then trade the jeans for a short black sweater dress and black tights.", 'question': 'What type of earrings does the main character borrow from Jane?', 'C1': 'A. Stud earrings', 'C2': 'B. Hoop earrings', 'C3': 'C. Dangly earrings', 'C4': 'D. Diamond earrings', 'C_correct': 'C. Dangly earrings', 'duration': 10.519375, 'summary': 'no'},
      {'wav_file': 'Someday_97_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_043_of_116_0.wav', 'segment_text': "Yes Aren't you going to ask me about my show What Yes I'm sorry tell me Well I'm pretty excited actually I just got booked to do my one man show Insights in the basement of Hooligans Hooligans that's great Where is that again You know the Irish bar on Second Avenue it has the basement where Claudia did her poetry reading Oh yeah that Hooligans yeah such a great space", 'question': 'Where will the one-man show be performed?', 'C1': 'A. In a theater on Broadway', 'C2': 'B. In the basement of an Irish bar', 'C3': "C. At Claudia's poetry reading", 'C4': 'D. In a small town in Connecticut', 'C_correct': 'B. In the basement of an Irish bar', 'duration': 12.6, 'summary': 'no'},
      {'wav_file': 'Someday_94_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_041_of_116_1.wav', 'segment_text': "He doesn't say anything so I feel obligated to keep going It's as if I'm not driving this train anymore I'm just holding on trying not to crash completely I've always loved the theater I say Thank God It isn't original but it's TRUE at least My dad would take me when I was a kid to whatever little show was playing in our town in Connecticut and we'd also see most of what was in New Haven and sometimes we'd come into the city and it wasn't just theater It was ballet and music and modern dance too I pause", 'question': "What is the narrator's childhood connection to the theater?", 'C1': 'A. She used to perform in school plays', 'C2': 'B. Her father would take her to various shows', 'C3': 'C. She always dreamed of becoming an actor', 'C4': 'D. She was part of a local theater group', 'C_correct': 'B. Her father would take her to various shows', 'duration': 29.88, 'summary': 'yes'},
      {'wav_file': 'Someday_134_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_073_of_116_4.wav', 'segment_text': "I don't want to admit it, but I'm still half-hoping to hear from James. But then I'm struck by how bad it would feel to wait for him on the night I just learned that no one's waiting for me anymore, and that catch you later okay isn't a plan, not a real one anyway. Maybe it wouldn't be such a bad thing if James called and got no answer. Um, okay? For what? He sits up, swinging his long legs down to the floor, then rubs his eyes and squints at me as if he's not sure whether he's awake or dreaming.", 'question': 'How does the narrator feel about receiving a call from James?', 'C1': 'A. She is still hopeful', 'C2': "B. She is sure that he won't call", 'C3': "C. She doesn't care about it", 'C4': 'D. She is optimistic', 'C_correct': 'A. She is still hopeful', 'duration': 7.73, 'summary': 'no'},
      {'wav_file': 'Someday_33_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_018_of_116_2.wav', 'segment_text': "Well I wouldn't say I'd be amazing in it although thanks for saying so I think I'd just be okay in it I mean it is sort of right in my wheelhouse but I think you'd actually be great in it I'm serious I mean I could do it I guess and I probably would do it if they asked but I think my problem with it isn't the play itself but the guy who's in it now What's his name Anyway it doesn't matter I just think he's not really acting so much as just smoldering or something up there and I'm like buddy you can't just play every scene sexy I mean that's not an active choice", 'question': 'What issue does the narrator have with the actor currently in the play?', 'C1': "A. She thinks he's too active", 'C2': "B. She believes he's too serious", 'C3': "C. She thinks he's smoldering too much", 'C4': 'D. She has no issue with him', 'C_correct': "C. She thinks he's smoldering too much", 'duration': 30.5, 'summary': 'yes'},
      {'wav_file': 'Someday_99_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_044_of_116_1.wav', 'segment_text': "There are the things we all know we're supposed to have monologue comedic and dramatic song up tempo and ballad but there's a serious lack of information beyond that Today I need a funny laugh but what else should I know how to do Roller skating maybe That seems to come up a lot lately Jokes I should know more jokes in case I ever get asked if I've heard any good jokes lately but I'm not a good joke teller I always mess up the endings Maybe I should try to memorize a knock knock joke at least just in case", 'question': 'What does the narrator feel she need to learn for auditions?', 'C1': 'A. Harseback riding', 'C2': 'B. Jokes', 'C3': 'C. Monologues', 'C4': 'D. Ballads', 'C_correct': 'B. Jokes', 'duration': 27.56996875, 'summary': 'no'},
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      {'wav_file': 'Someday_120_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_053_of_116_2.wav', 'segment_text': "Everything you need is in each packet so it takes the guesswork out of dieting You sound like you've joined a cult What happens when you have to go back to the real world the world where you have to think for yourself Hopefully I'll be so weak and frail that food will have lost its appeal entirely Great plan And who's on Lisa today I'm pretty sure today's show is Women Who Wish Their Best Friends Would Stop Judging Them Har har I'm going to work now Do you want me to take the TV cord with me", 'question': "What topic is discussed on Lisa's show, in the narrator's joke?", 'C1': 'A. Weight loss programs', 'C2': 'B. The challenges of dieting', 'C3': "C. Women's relationships with their best friends", 'C4': 'D. The appeal of joining a cult', 'C_correct': "C. Women's relationships with their best friends", 'duration': 13.885, 'summary': 'yes'},
      {'wav_file': 'Someday_27_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_016_of_116_0.wav', 'segment_text': "And maybe we'll go out sometime and maybe we'll fall in love and someday we'll happen to be walking down this very street and he'll say remember that day when we accidentally ran into each other here But none of that can happen if he walks by me on the street today I make my way across 45th Street and hover near a trash can digging in my bag as if I'm looking for something I need to throw out waiting for his light to change Finally I can see him start to walk across the street I look away so he doesn't see me staring at him and when I glance up again I've lost him in the crowd", 'question': "What is the narrator's hope regarding the person she encounters on the street?", 'C1': 'A. To avoid meeting them', 'C2': 'B. To have a chance encounter', 'C3': 'C. To never see them again', 'C4': 'D. To get their phone number', 'C_correct': 'B. To have a chance encounter', 'duration': 11.085, 'summary': 'no'},
      {'wav_file': 'Someday_64_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_031_of_116_0.wav', 'segment_text': "The traffic isn't too bad yet and the sun is still low in the sky I pass a few trucks parked on 72nd flanked by orange cones and signs stapled to the electrical poles that say no parking permit to film This must be the shoot my shoot A stocky girl is standing on the corner by the trucks wearing a giant fur hat with ear flaps and speaking into a walkie talkie Hi excuse me I say What is this for Mayonnaise commercial she says gruffly I'm in the wrong place", 'question': 'What is happening on 72nd street?', 'C1': 'A. A traffic jam', 'C2': 'B. A film shoot', 'C3': 'C. A parade', 'C4': 'D. A protest', 'C_correct': 'B. A film shoot', 'duration': 14.40496875, 'summary': 'no'},
      {'wav_file': 'Someday_55_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_027_of_116_3.wav', 'segment_text': "I'm mesmerized by her easy way with the awkward looking spoon shaped strainer that holds the tiny leaves and by the diamond engagement ring that glitters on her hand I wonder if she ever takes it off and if it has a napkin it rests on at night too Milk or lemon she asks Um milk I guess Everett and I are the same age but something about the formal way she does everything makes me sit up straighter on the sofa as if I'm at the house of an older relative instead of in my own living room in Brooklyn", 'question': 'What does the narrator do when talking to Everett?', 'C1': 'A. She sits up straight', 'C2': 'B. She talkes with a deeper voice', 'C3': 'C. She avoids eye contact', 'C4': 'D. She lowers her voice', 'C_correct': 'A. She sits up straight', 'duration': 9.065625, 'summary': 'no'},
      {'wav_file': 'Someday_12_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_008_of_116_4.wav', 'segment_text': "Of course the wedding's not until June but if you wanna stay at the Sands by the shore she said to book early Okay thanks Franny I'm worried about you Why Well from my initial calculations this new telephone identification system could save you upwards of 20 to 25 seconds per day I'm concerned about how you'll adjust to all the new free time Har har Also one of my students says there's a show called Friends Apparently it's a popular one Maybe you should try to apply for that", 'question': "What does the narrator's father joke about regarding caller ID?", 'C1': 'A. The invention of the telephone', 'C2': 'B. The inconvenience of caller ID', 'C3': 'C. The potential time saved with caller ID', 'C4': 'D. The popularity of caller ID', 'C_correct': 'C. The potential time saved with caller ID', 'duration': 7.43, 'summary': 'no'},
      {'wav_file': 'Someday_69_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_033_of_116_3.wav', 'segment_text': "Mmm let me see Carol puts on the glasses that hang on a chain around her neck and brings her face just inches from mine I hold very still as if I'm being examined in a doctor's office Well you have some freckles it's true I don't think they're distracting though I don't see them as a problem but I can even out your skin tone if that's what concerns you Carol sighs I don't think she likes me Okay great whatever you think thanks Want a magazine", 'question': 'What does Carol suggest to the main character regarding her freckles?', 'C1': 'A. Cover them up with makeup', 'C2': 'B. Embrace them as unique', 'C3': 'C. Remove them with a cream', 'C4': 'D. Get freckle tattoos', 'C_correct': 'A. Cover them up with makeup', 'duration': 14.785, 'summary': 'no'},
      {'wav_file': 'Someday_142_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_088_of_116_2.wav', 'segment_text': "Metro North is on strike. So I can't take the train I have no wallet. No driver's license. I can't pick up the rental car Two nights ago on the way home from James's I arrived at our front door Just as our downstairs neighbor was leaving and Dan and Jane were home with the door to our place already open So it wasn't until I went to get bagels the next morning that I realized in my rush to leave I forgot my purse at James's apartment. I left him a message, but he must have already taken off for Los Angeles", 'question': 'Where did the narrator forget her purse?', 'C1': 'A. In the subway', 'C2': "B. In James's apartment", 'C3': 'C. In the acting school', 'C4': 'D. In the cab', 'C_correct': "B. In James's apartment", 'duration': 13.62353125, 'summary': 'no'},
      {'wav_file': 'Someday_123_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_054_of_116_3.wav', 'segment_text': "I'll admit it's sort of a sick relationship to have with someone who is hardly in your life Lisa doesn't come on until noon and I'm regularly sleeping until then now because there's no reason to get up any earlier Jane is treating it as a big deal as if there's something really wrong with me She calls me from work every day just to make sure I get up I'm worried about you You're depressed I'm fine My roommate Francis Farmer Jane says melodramatically I'm a sensitive creative type I'm going through something", 'question': 'Why does Jane call the narrator character every day?', 'C1': 'A. To share gossip', 'C2': 'B. To check if the main character is awake', 'C3': 'C. To discuss their favorite TV shows', 'C4': 'D. To offer emotional support', 'C_correct': 'B. To check if the main character is awake', 'duration': 11.31, 'summary': 'no'},
      {'wav_file': 'Someday_148_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_092_of_116_6.wav', 'segment_text': "Your boyfriend's so cute, she squeals. I didn't get a good look at him before. He's my roommate, Katie, I say emphatically, not looking at Dan. I told you, my boyfriend had to work. You looked beautiful today, by the way. Yes, Dan says, beautiful ceremony, too. Thanks Fran, thanks roommate. Katie raises her eyebrows at Dan and looks him up and down. You're a good dancer, she says, a gleam in her eye. Thank you, he says, with a funny little bow.", 'question': 'What does Dan do after receiving a compliment?', 'C1': 'A. He blushes', 'C2': 'B. He bows', 'C3': 'C. He returns the compliment', 'C4': 'D. He gets uncomfortable', 'C_correct': 'B. He bows', 'duration': 9.81725, 'summary': 'no'},
      {'wav_file': 'Someday_2_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_004_of_116_1.wav', 'segment_text': "Successful actresses are disciplined people who wake up early to focus on their craft I told myself even ones who still make their living as waitresses like me I started leaving the alarm clock on the landing between Jane's room and mine so I'd have to actually get out of bed in order to turn it off instead of hitting snooze over and over like I normally do I also resolved to quit smoking again to stop losing purses wallets and umbrellas and to not eat any more cheese puffs not even on special occasions", 'question': 'What resolution does the narrator make about her lifestyle to become a successful actress?', 'C1': 'A. To wake up early and focus on her craft', 'C2': 'B. To quit smoking and stop losing personal items', 'C3': 'C. To stop eating cheese puffs, even on special occasions', 'C4': 'D. All of the above', 'C_correct': 'D. All of the above', 'duration': 11.38125, 'summary': 'no'},
      {'wav_file': 'Someday_116_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_052_of_116_0.wav', 'segment_text': "Yes I noticed that this may come as a shock to you But many studies have shown there's at least a slight nutritional difference between spinach that's rotting in the crisper drawer and spinach That's ingested into the body Details I scoff I give up she says heading for the kitchen more coffee I Stare down at my bagel which seems to I me warily back Maybe Jane's right Maybe I need more education I wonder what Penelope schlotzky eats on Sunday Probably not bagels", 'question': 'What does the narrator stare down at?', 'C1': 'A. A bagel', 'C2': 'B. Some spinach', 'C3': 'C. A cup of coffee', 'C4': 'D. A cup of tea', 'C_correct': 'A. A bagel', 'duration': 14.315, 'summary': 'no'},
      {'wav_file': 'Someday_126_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_055_of_116_1.wav', 'segment_text': "What luck maybe this is going to be okay Maybe I'm not repulsive and mushy after all I'm a genius who has been in studious self imposed exile whilst honing my craft waiting for this day to come with patience and nobility It was meant to be Yes I know it I know it a little too well actually Great then just get over there as quickly as you can They're closing the session at 2 p m I'll fax you the sides and the appointment info Just call us with any questions and break a leg", 'question': "What is the narrator's attitude towards her own preparation and opportunity?", 'C1': 'A. Uncertain and self-critical about her appearance and skills', 'C2': 'B. Confident and self-assured about the effort put into her craft', 'C3': 'C. Indifferent and unprepared for the upcoming opportunity', 'C4': 'D. Overwhelmed and doubtful about meeting the appointment on time', 'C_correct': 'B. Confident and self-assured about the effort put into her craft', 'duration': 7.1170625, 'summary': 'yes'},
      {'wav_file': 'Someday_124_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_054_of_116_4.wav', 'segment_text': "If I come home to you eating a pint of Haagen Dazs and watching When Harry Met Sally I'm calling the police What are they going to do arrest me for being a clich√© So when the phone rings at 1130 that morning I lunge for it grabbing it on the second ring I'll pretend to Jane I'm in good spirits I'll act peppy as if I've been up for hours Hello this is Richard calling from Absolute Artists Is Franny there", 'question': 'Who calls the main character from Absolute Artists?', 'C1': 'A. Barney Sparks', 'C2': 'B. Richard', 'C3': 'C. Jane', 'C4': 'D. Dan', 'C_correct': 'B. Richard', 'duration': 7.1925, 'summary': 'no'},
      {'wav_file': 'Someday_4_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_005_of_116_3.wav', 'segment_text': "You told me you'd try if I let you I promised I'd make sure I take a deep breath and I bellow in my most diaphragmatically supported Shakespearean tone Dan come in Miraculously the left side of Dan's face appears through a crack in the door but it's not until he's confirmed my fully covered status and stepped all the way into the room leaning his oversized frame awkwardly against the corner bookshelf that I suddenly remember My hair", 'question': 'What does the narrator suddenly remember when Dan enters the room?', 'C1': 'A. Her hair', 'C2': 'B. A book', 'C3': 'C. Her appointment', 'C4': 'D. A phone call', 'C_correct': 'A. Her hair', 'duration': 13.094375, 'summary': 'no'},
      {'wav_file': 'Someday_145_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_092_of_116_2.wav', 'segment_text': "Actually, it's just Franny, I say, and my voice sounds strangely cold. Of course, so sorry, I knew that. I guess I'm a little nervous to finally meet you, she admits shyly, and my father gazes at her, delighted. Dinner arrives and I finally manage to sputter out a few sentences as I pick at my burger. The Finnegans always have a barbecue instead of a caterer, and usually I love how homey and informal and comforting the food is, but tonight I've lost my appetite.", 'question': 'What do the Finnegans prefer over a caterer?', 'C1': 'A. A home cooked meal', 'C2': 'B. Ordering take out', 'C3': 'C. A potluck', 'C4': 'D. A barbecue', 'C_correct': 'D. A barbecue', 'duration': 9.6856875, 'summary': 'no'},
      {'wav_file': 'Someday_109_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_048_of_116_2.wav', 'segment_text': "Think about it There's a reason they keep the actual dry cleaning apparatus hidden behind all those racks of hanging clothes They don't want you to crack their code They won't let anybody in Not anybody Even rich people You know any rich people with dry cleaning machines in their house Exactly Even they still have to pick it up and drop it off like everyone else I'm pretty sure they have people who do that for them But still the dry cleaners own you You're at their mercy Clothes that have to be dry cleaned look down on you", 'question': 'What does the narrator talk about?', 'C1': 'A. Acting', 'C2': 'B. Shopping', 'C3': 'C. How to get rich', 'C4': 'D. Dry cleaning', 'C_correct': 'D. Dry cleaning', 'duration': 9.1625, 'summary': 'no'},
      {'wav_file': 'Someday_136_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_079_of_116_3.wav', 'segment_text': "There they are on the floor of the landing, the pages that contain my first real job, my first real character with an actual name. Sheila, I say out loud, trying on the suit of my first real character whose name doesn't include a number or the word the. I decide I won't even skim the pages before reading them with Dan. This is like an exercise we do in class sometimes where Stavros gives us pages from something we've never seen and we cold read them out loud piecing the character and situation together as we go.", 'question': 'What does the narrator decide about reading the script?', 'C1': 'A. She will skim the pages before reading it with Dan', 'C2': "B. She won't look at it before reading it with Dan", 'C3': 'C. She will read it when she is alone', 'C4': 'D. She will read it during the class', 'C_correct': "B. She won't look at it before reading it with Dan", 'duration': 13.8525625, 'summary': 'no'},
      {'wav_file': 'Someday_40_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_021_of_116_3.wav', 'segment_text': "Aren't you cold It's James Franklin the last person I want to see right now Nothing could make me feel worse after what happened tonight than to be reminded that a guy I gushed all over got my phone number but never called me Even after I learned that he and Penelope were some sort of couple I held my breath every day for the last two weeks while waiting for the machine to rewind hoping he'd left a message but he never did James smiles at me and stamps his feet rubbing his hands together and blowing on them", 'question': 'Why does the narrator feel embarrassed to see James Franklin?', 'C1': 'A. Because he got her phone number but never called', 'C2': 'B. Because he is dating Penelope', 'C3': 'C. Because he reminds her of a bad experience', 'C4': 'D. Because he is unfriendly', 'C_correct': 'A. Because he got her phone number but never called', 'duration': 7.0725, 'summary': 'no'},
      {'wav_file': 'Someday_26_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_015_of_116_2.wav', 'segment_text': 'My stomach lurches The action between each line is the exact opposite of what the line is After kids are my number one priority it says rushing mom gets daughter to school just as the bell is ringing After the thing about always having time for friends looks at answering machine guiltily and decides to screen the call At the end the harried housewife stuffs an impossible amount of dirty clothes in the washer which miraculously come out clean and she gets a huge hug from her approving husband', 'question': "What is the narrator's reaction to the script she's reading?", 'C1': 'A. Her stomach lurches', 'C2': 'B. She finds it amusing', 'C3': 'C. She feels inspired', 'C4': 'D. She is moved to tears', 'C_correct': 'A. Her stomach lurches', 'duration': 10.45875, 'summary': 'yes'},
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    Routine Start_Segment
    Routine Training_Segment
    Routine Rating
    LoopInitiator sum_true_exp loopType="TrialHandler"
      loopType = random
      nReps = summa
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      Routine Start_Sum_Exp
      LoopInitiator dummy_loop_exp loopType="TrialHandler"
        loopType = random
        nReps = doSumexp
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        Routine Summary
      LoopTerminator dummy_loop_exp
    LoopTerminator sum_true_exp
    Routine Multiple_Choice_2
  LoopTerminator experiment
