PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = speech_rate
  keyboardBackend = Pyglet
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will hear 150 audio segments with varying speeds of speech and durations. You will be asked to:

        1. While listening to each segment, continuously indicate your level of comprehension using the slider.

        2. After the segment, give a written summary of what you heard. Please write as much as you can adn press "Done" button the finish the summary task.

        The segments you will hear are about an actress named Franny living in NYC with her two flatmates, Jane and Dan.

        Don't worry if it's not clear yet! We have two training rounds with the slowest and fastest speeds.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Start Trial
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    CodeComponent slider_setup
      Code Type = Py
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      Before Experiment:
        import serial
        import time
        import serial.tools.list_ports
        import multiprocessing as mp
        import csv
        import sys

        def workerBody(participant, session, stop, trial, ready, queue):
            output_data = []
            ports = serial.tools.list_ports.comports()
            for port, desc, hwid in sorted(ports):
                if desc == "Feather M0 Express":
                    port2 = port

            ser = serial.Serial(port2, 500000, timeout=0.01)
            ready.set()
            while not stop.is_set():
                ser.readline()
                if trial.is_set():
                    ready.clear()
                    trial_start_time = time.monotonic()
                    trial_offset = 0
                    while trial.is_set():
                        line = ser.readline()
                        if trial_offset == 0:
                            trial_offset = time.monotonic()

                        try:
                            output_data.append(
                                (int(line.decode("utf-8").split(' ')[0]), int(line.decode("utf-8").split(' ')[1])))
                        except:
                            print("Warning: missing frame")

                    try:
                        real_time_elapsed = 1000 * (time.monotonic() - trial_start_time)
                        drift = real_time_elapsed - (output_data[-1][1] - output_data[0][1])
                        print((drift / (output_data[-1][1] - output_data[0][1])) * 100)

                        offset = output_data[0][1]
                        for i, pt in enumerate(output_data):
                            output_data[i] = (pt[0], pt[1] - offset + ((trial_offset - trial_start_time) * 1000))

                        with open(f"{_thisDir}/data/slider_{participant}_{session}_{queue.get()}.csv",'w') as out:
                            csv_out=csv.writer(out)
                            csv_out.writerow([drift, real_time_elapsed])
                            csv_out.writerow(['value','time'])
                            for row in output_data:
                                csv_out.writerow(row)

                    except Exception as error:
                        print("Error occured while processing last trial. Data discarded")
                        print(error)

                    output_data.clear()
                    ready.set()
            ser.close()


        class Slider:
            def __init__(self, participant, session):
                mp.set_start_method('spawn')
                self.stop = mp.Event()
                self.trial = mp.Event()
                self.ready = mp.Event()
                self.queue = mp.Queue()
                self.proc = mp.Process(target=workerBody, args=(
                    participant, session, self.stop, self.trial, self.ready, self.queue))
                self.proc.start()

                while not self.ready.is_set():
                    if not self.proc.is_alive():
                        raise Exception("Error: Slider process exited")
                    time.sleep(0.01)

            def start_trial(self, wav_file):
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)
                    self.trial.set()
                    self.queue.put(wav_file)

            def stop_trial(self):
                self.trial.clear()
                if not self.proc.is_alive():
                    raise Exception("Error: Slider process exited")
                else:
                    while not self.ready.is_set():
                        if not self.proc.is_alive():
                            raise Exception("Error: Slider process exited")
                        time.sleep(0.01)

            def __del__(self):
                self.stop.set()
                self.proc.join()
      Begin Experiment:
        myslider = Slider(expInfo['participant'], expInfo['session'])
      End Experiment:
        del myslider
  Routine Training_Segment
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    SoundComponent Experimen_audio
      sound [set every repeat] = $wav_file
      startVal [time (s)] = 0.00
      stopWithRoutine = False
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    CodeComponent slider_rt
      Code Type = Py
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      Begin Routine:
        myslider.start_trial(wav_file)
      End Routine:
        myslider.stop_trial()
    PolygonComponent polygon
      fillColor = white
      ori = 180
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine Rating
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.2
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      size = (0.2, 0.1)
      startVal [condition] = slider.rating
      text = Confirm
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.2
      text = How well did you understand it?
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if summary == "yes":
            summa = 1
        else:
            summa = 0
  Routine Multiple_Choice
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    FormComponent form
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Training_data.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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    ButtonComponent Confirm
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0,-0.4)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Confirm
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  Routine Multiple_Choice_2
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    TextComponent Question
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent Option_1
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C1
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    TextComponent Option_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C2
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    TextComponent Option_3
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C3
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    TextComponent Option_4
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $C4
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    ButtonComponent A
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.4,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent B
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.1,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent C
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.2,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent D
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      save = first click
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
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  Routine Summary
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.02
      placeholder [set every repeat] = Summarize here
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent summary_done
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Done
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  Routine Start_Summary
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have 15 seconds to write.
        If you're unable to report anything, you may choose to skip the verbal summary by clicking on the 'Skip Summary' button.
    ButtonComponent summary_button
      bold = True
      callback = button_pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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    ButtonComponent skip_button
      bold = True
      callback = button_pressed= "skip"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5,-0.4)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = I didn't understand anything
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if button_pressed == "next":
            doSum = 1
        else:
            doSum = 0
  Routine Start_Segment
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    ButtonComponent Play
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent Trial_counter
      letterHeight = 0.02
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(round((experiment.thisN / experiment.nTotal) * 100)) + ' %' 
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    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider.
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  Routine Start_Exp
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    TextComponent Start_exp
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press the button below to start the experiment.
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    ButtonComponent Start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Start
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  Routine Start_Sum_Exp
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on the 'Start Typing' button below to begin your written summary. You'll have 15 seconds to write.
        If you're unable to report anything, you may choose to skip the verbal summary by clicking on the 'Skip Summary' button.
    ButtonComponent summary_button_exp
      bold = True
      callback = pressed= "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = Start Typing
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    ButtonComponent skip_button_exp
      bold = True
      callback = pressed= "skip"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = I didn't understand anything
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if pressed == "next":
            doSumexp = 1
        else:
            doSumexp = 0
  Routine Start_Segment_Train
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    ButtonComponent Play_train
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent Trial_counter_train
      letterHeight = 0.02
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Completed = ' +str(training.thisN) + '\n Remaining = ' + str(training.nRemaining + 1)
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    TextComponent text_5
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please reset the slider.
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  Routine summary_true
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  Routine Thanks
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Thank you for!
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Flow
  Routine Instructions
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = training.xlsx
    loopType = sequential
    nReps = 1
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    Routine Start_Segment_Train
    Routine Training_Segment
    Routine Summary
  LoopTerminator training
  Routine Start_Exp
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = sub-0_shortened.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'wav_file': 'Someday_142_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_088_of_116_2.wav', 'segment_text': "Metro North is on strike. So I can't take the train I have no wallet. No driver's license. I can't pick up the rental car Two nights ago on the way home from James's I arrived at our front door Just as our downstairs neighbor was leaving and Dan and Jane were home with the door to our place already open So it wasn't until I went to get bagels the next morning that I realized in my rush to leave I forgot my purse at James's apartment. I left him a message, but he must have already taken off for Los Angeles", 'question': 'Where did the narrator forget her purse?', 'C1': 'A. In the subway', 'C2': "B. In James's apartment", 'C3': 'C. In the acting school', 'C4': 'D. In the cab', 'C_correct': "B. In James's apartment", 'duration': 8.51471875, 'summary': 'no'},
      {'wav_file': 'Someday_20_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_012_of_116_1.wav', 'segment_text': 'Upstairs the waiting room is crowded which means there must be a few different casting calls There are boys and girls near the age of the elevator twins a couple of men in their 50s both in suit and tie and several girls who remind me of me but a better more put together me the me who would play me in the TV movie of the fictional life of the real me I sign in Name time arrived time scheduled agency social security number', 'question': 'What observation does the narrator make about the individuals in the waiting room?', 'C1': 'A. They are all likely there for the same casting call', 'C2': 'B. They are unorganized and scattered', 'C3': 'C. They appear to be different versions of the narrator, better and more composed', 'C4': "D. They are unrelated to the narrator's field of work", 'C_correct': 'C. They appear to be different versions of the narrator, better and more composed', 'duration': 27.41, 'summary': 'no'},
      {'wav_file': 'Someday_91_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_040_of_116_0.wav', 'segment_text': "Please go ahead and begin your monologue whenever you're ready We can chat afterwards Take your time His words are encouraging but his face is neutral at best And when there are two people in a room and one of them is there purely to see the other person do something the notion that that person could actually take their time seems ridiculous But I try I try to take a deep breath but the air gets sort of stuck and doesn't go all the way down to my lungs I need a minute to calm down but I can't possibly take it", 'question': "What is the narrator's reaction to the suggestion to take her time?", 'C1': 'A. She feels comforted', 'C2': 'B. She finds it ridiculous', 'C3': 'C. She rejects the offer', 'C4': 'D. She chats with the agent first', 'C_correct': 'B. She finds it ridiculous', 'duration': 7.1475, 'summary': 'yes'},
      {'wav_file': 'Someday_33_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_018_of_116_2.wav', 'segment_text': "Well I wouldn't say I'd be amazing in it although thanks for saying so I think I'd just be okay in it I mean it is sort of right in my wheelhouse but I think you'd actually be great in it I'm serious I mean I could do it I guess and I probably would do it if they asked but I think my problem with it isn't the play itself but the guy who's in it now What's his name Anyway it doesn't matter I just think he's not really acting so much as just smoldering or something up there and I'm like buddy you can't just play every scene sexy I mean that's not an active choice", 'question': 'What issue does the narrator have with the actor currently in the play?', 'C1': "A. She thinks he's too active", 'C2': "B. She believes he's too serious", 'C3': "C. She thinks he's smoldering too much", 'C4': 'D. She has no issue with him', 'C_correct': "C. She thinks he's smoldering too much", 'duration': 13.365625, 'summary': 'no'},
      {'wav_file': 'Someday_139_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_081_of_116_1.wav', 'segment_text': "Sorry, you guys says Dan I suck. I don't know how actors do it. I want to help Can I just read this next scene to myself first before we do it out loud? Of course I say to him generously then I turn to Jane and roll my eyes these method actors Here you go. Mr. James Dean sir says Jane handing him a single sheet of paper. It's just the one page What a drama queen he is don't quit your day job Danny Dan pours over the single sheet holding it tightly on either side.", 'question': 'What does the narrator do when she turns to Jane?', 'C1': 'A. She rolls her eyes', 'C2': 'B. She smiles', 'C3': 'C. She winks', 'C4': 'D. She nods', 'C_correct': 'A. She rolls her eyes', 'duration': 13.749, 'summary': 'no'},
      {'wav_file': 'Someday_65_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_032_of_116_0.wav', 'segment_text': "From the minute I walk into the wardrobe fitting in a trailer near mine I'm confused There are two giant rolling racks one full of tan trousers one stuffed with 30 or 40 identical blue shirts Oh Are there are there more people coming I ask a harried looking woman nearby She looks at me as though I've said something strange what oh the racks No those are all for you But aren't these all the same pants I say laughing a little", 'question': 'What does the narrator find confusing in the wardrobe fitting?', 'C1': 'A. The lack of clothing options', 'C2': 'B. The number of people there', 'C3': 'C. The presence of a harried woman', 'C4': 'D. The identical blue shirts and tan trousers', 'C_correct': 'D. The identical blue shirts and tan trousers', 'duration': 10.53375, 'summary': 'yes'},
      {'wav_file': 'Someday_39_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_021_of_116_1.wav', 'segment_text': "People who are admired for holding it together are not people who are about to get agents They're people who are recovering from cancer or undergoing a murder trial And I dropped a section I add hoping he'll say he didn't notice Yeah I know but I only know because I'm obsessed with that guy's work No one will dock you for that It's not exactly a glowing review but he doesn't seem totally horrified Still he's avoiding the thing I most want to know But when I fell I mean how bad was it", 'question': 'What does the narrator hope the person they are talking to will say?', 'C1': "A. That he didn't notice the mistake", 'C2': 'B. That he noticed the dropped section', 'C3': 'C. That he wants to be an agent', 'C4': "D. That he's obsessed with the narrator's work", 'C_correct': "A. That he didn't notice the mistake", 'duration': 9.134375, 'summary': 'no'},
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      {'wav_file': 'Someday_71_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_033_of_116_5.wav', 'segment_text': "Mavis Alicia Carol I say to myself Mavis Alicia Carol Do you like to do this yourself I look up for my magazine to find Carol waving a strange metal object in front of my face I have no idea what it is or what it might be used for I'm sorry what is that Carol peers over her glasses at me in surprise You've never seen one of these before No But of course you have It's an eyelash curler I'm sure your mother has one", 'question': 'What is the object that the narrator has never seen before?', 'C1': 'A. A cushion foundation', 'C2': 'B. A colorful eyeliner', 'C3': 'C. An eyelash curler', 'C4': 'D. A brow gel', 'C_correct': 'C. An eyelash curler', 'duration': 13.0725, 'summary': 'yes'},
      {'wav_file': 'Someday_58_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_028_of_116_0.wav', 'segment_text': "Her profile is sharp her whole body a series of angles that have somehow Improbably folded themselves on their hinges into the soft chair There's something so regal and linear about her I can't imagine her ever collapsing into giggles or crying hysterically She's taking her time to consider what to say next in a way that suggests she's used to people waiting for her I wonder what that's like to never worry about filling the silence Her eyes eventually float back to me", 'question': "How does the narrator describe the woman's profile?", 'C1': 'A. Sharp', 'C2': 'B. Round', 'C3': 'C. Regal', 'C4': 'D. Hysterical', 'C_correct': 'A. Sharp', 'duration': 12.81, 'summary': 'no'},
      {'wav_file': 'Someday_73_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_035_of_116_1.wav', 'segment_text': "It's four flights up to Barney's office I'm puffing by the time I make it to the top There's no secretary sitting at the desk in the little front room Hello I say to the emptiness Back here dear comes a loud and raspy voice There's a desk with a window behind it and bookshelves on either side which are stacked to the ceiling with scripts and old playbills The titles are written in Sharpie on the edge of the pages so they can be read when stacked face to face and the block print is bold but shaky", 'question': "What are the stacked objects at Barney Sparks' office?", 'C1': 'A. Scripts', 'C2': 'B. Paychecks', 'C3': 'C. Menus', 'C4': 'D. Photos', 'C_correct': 'A. Scripts', 'duration': 29.29003125, 'summary': 'no'},
      {'wav_file': 'Someday_45_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_024_of_116_1.wav', 'segment_text': "She's one of my best friends in class but I wonder sometimes how she feels about having gone from the lead of a hit TV show to commercials which is mainly what she does now and not the kind where she's playing Dina Shannon formerly of the hit show There's Pierre but just a regular actor pretending to like one brand of orange juice over another Anything she says flicking an ash on the ground Um yeah actually I got two callbacks with agencies Yeah she says you only need one", 'question': 'What show did Dina, the actress, used to lead?', 'C1': 'A. Friends', 'C2': "B. There's Pierre", 'C3': 'C. Cordelia Biscayne', 'C4': 'D. The House of Mirth', 'C_correct': "B. There's Pierre", 'duration': 9.06875, 'summary': 'no'},
      {'wav_file': 'Someday_140_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_081_of_116_2.wav', 'segment_text': "a Motown singer croons soft and low from the stereo the camera pans across the floor Sutton's sneaker Sheila's bra. We see a velvet ring box on the nightstand opened but empty We see remnants of the wrapping from Sheila's gift and as the camera moves closer to the bed We see it's a framed collage homemade simple but beautiful the word Yes repeated a hundred times in different sizes and shapes and colors She knew tonight was theirs the ring on her finger says the proposal went well", 'question': 'What accessory does the women wear?', 'C1': 'A. A scrunchy', 'C2': 'B. An engagement ring', 'C3': 'C. A diamond necklace', 'C4': 'D. Dangling earrings', 'C_correct': 'B. An engagement ring', 'duration': 14.41271875, 'summary': 'no'},
      {'wav_file': 'Someday_138_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_080_of_116_1.wav', 'segment_text': "The page is practically touching his glasses, so I can't exactly see his reaction. Dan, I say, what do you think? I mean, the script isn't too terrible, right? I was distracted by having to read it out loud, Dan says, a bit grumpy. But you're not the actor we're paying attention to in this scene, Dan, Jane tells him. Then, trying to help, she says, come on, be a pal. Say something nice to Franny about her new job. Dan thinks for a second, then says, the dialogue isn't bad, although too many sentences start with well.", 'question': 'Why is Dan grumpy?', 'C1': 'A. Because he is hungry', 'C2': "B. Because he doesn't like reading", 'C3': 'C. Because he has to read out loud', 'C4': "D. Because he doesn't have enough time to help the narrator", 'C_correct': 'C. Because he has to read out loud', 'duration': 12.2725625, 'summary': 'yes'},
      {'wav_file': 'Someday_83_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_037_of_116_4.wav', 'segment_text': "I sound odd to myself as if I'm playing the part of a professional actress who has meetings all the time and is sort of blas√© about them I loved Barney Sparks I want to tell Dan but I'm suspicious of anything that seems too easy I'm not sure why I can't say that now and not sure why I didn't jump at the chance to say yes in Barney's office It feels like I'm an actor in an Italian movie from the 60s saying the placeholder lines into the camera waiting for the real ones that come later", 'question': 'What is the narrator suspicious of?', 'C1': 'A. Things that take too long', 'C2': 'B. Things that are hard to do', 'C3': 'C. Things that seem controversial', 'C4': 'D. Things that seem too easy', 'C_correct': 'D. Things that seem too easy', 'duration': 9.071875, 'summary': 'yes'},
      {'wav_file': 'Someday_64_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_031_of_116_0.wav', 'segment_text': "The traffic isn't too bad yet and the sun is still low in the sky I pass a few trucks parked on 72nd flanked by orange cones and signs stapled to the electrical poles that say no parking permit to film This must be the shoot my shoot A stocky girl is standing on the corner by the trucks wearing a giant fur hat with ear flaps and speaking into a walkie talkie Hi excuse me I say What is this for Mayonnaise commercial she says gruffly I'm in the wrong place", 'question': 'What is happening on 72nd street?', 'C1': 'A. A traffic jam', 'C2': 'B. A film shoot', 'C3': 'C. A parade', 'C4': 'D. A protest', 'C_correct': 'B. A film shoot', 'duration': 9.003125, 'summary': 'no'},
      {'wav_file': 'Someday_67_condition-2x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_033_of_116_1.wav', 'segment_text': "Well I'm doing all right I guess I imagine myself saying but I'm about three inches from where I really want to be I think of how much effort has taken me to even be a 29 I can't imagine what else I could do to be a 26 but it makes sense too that the Cordelia Biscaynes of the world are literally measurably different from the rest of us Three inches might as well be 300 to me today Hi I'm Carol", 'question': 'What size does the narrator wear?', 'C1': 'A. 29', 'C2': 'B. 26', 'C3': 'C. 30', 'C4': 'D. 28', 'C_correct': 'A. 29', 'duration': 14.635, 'summary': 'no'},
      {'wav_file': 'Someday_44_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_024_of_116_0.wav', 'segment_text': "It's such a talent to be able to make people laugh but God forbid you end up on something joyless and soul crushing like that show with all the nurses Hello New York The first person I spot outside the theater is Dina smoking with a few other classmates Dina is one of the older members of our class in her 40s maybe and is still sort of famous from a show she did in the 80s called There's Pierre which I remember watching all the time growing up but she never mentions it so I don't either", 'question': 'What show does the narrator consider joyless and soul-crushing?', 'C1': 'A. A show about nurses', 'C2': 'B. A show called "Hello New York"', 'C3': 'C. A show from the 80s', 'C4': 'D. A show with Dina', 'C_correct': 'A. A show about nurses', 'duration': 11.2275, 'summary': 'no'},
      {'wav_file': 'Someday_66_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_032_of_116_1.wav', 'segment_text': "These are perfect Let's Polaroid these two we might have to cut them in the back though She says you guys really shouldn't fudge your sizes you know she attempts a smile but I can tell she's irritated I Didn't fudge my sizes I say as nicely as I can at least I don't think I did Well what jean size did you give them Eight maybe in inches I mean I'm not sure I didn't know they made pants in sizes like that", 'question': 'What does the woman suggest regarding jeans sizes?', 'C1': 'A. The narrator should not fudge her size', 'C2': 'B. The narrator should avoid mentioning her size', 'C3': "C. Sizes like eight inches don't exist", 'C4': 'D. Smiles are essential for jeans fittings', 'C_correct': 'A. The narrator should not fudge her size', 'duration': 7.1725, 'summary': 'yes'},
      {'wav_file': 'Someday_32_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_018_of_116_0.wav', 'segment_text': "Navigating the crowd on the sidewalk is a challenge I like I'm running without touching anyone else on the street I'm a character in a human video game keeping my bubble of space from being invaded eyeing an open slot on the sidewalk speeding up to grab it before someone else does slowing down until I see another space working together with the strangers on the street as though we're all performing an elaborate dance perfectly choreographed for thousands of people I'm happy A guy I like got my number", 'question': 'How does the narrator feel while navigating the crowded sidewalk?', 'C1': 'A. Anxious', 'C2': 'B. Happy', 'C3': 'C. Frustrated', 'C4': 'D. Confused', 'C_correct': 'B. Happy', 'duration': 29.01996875, 'summary': 'no'},
      {'wav_file': 'Someday_16_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_010_of_116_0.wav', 'segment_text': "When he tries to describe the story to me I find myself counting the planks in our floor weighing the merits of vegetable versus scallion cream cheese But I'm sure it's better than it sounds How's my hair I'm taking an apartment wide poll for some reason this time my question is accompanied by a weird sort of tap step Flourish in order to sell it I hate myself I must be stopped Big he says hopefully huh", 'question': 'What does the narrator do while the person describes the story to her?', 'C1': 'A. Counts the planks in the floor', 'C2': 'B. Weighs the merits of cream cheese', 'C3': 'C. Dances a tap step', 'C4': 'D. Flips her hair dramatically', 'C_correct': 'A. Counts the planks in the floor', 'duration': 6.895, 'summary': 'no'},
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      {'wav_file': 'Someday_11_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_008_of_116_3.wav', 'segment_text': "Hello Yes hi Dad I said Franny this is your father Dad I know How did you know it was me I told you we have caller ID now Is it curable Dad it's that thing where your number comes up when you call What a horrible invention Why would anyone want that So you know who's calling before you pick up Why don't you just say hello who's calling Dad what's up I have an audition To the point then Your Aunt Mary Ellen wanted me to remind you to book a room for Katie's wedding", 'question': "What does the narrator's father want them to do regarding Katie's wedding?", 'C1': 'A. Attend the rehersal dinner', 'C2': 'B. Book a room for the wedding', 'C3': 'C. Be a bridesmaid', 'C4': 'D. Decline the wedding invitation', 'C_correct': 'B. Book a room for the wedding', 'duration': 7.36, 'summary': 'no'},
      {'wav_file': 'Someday_97_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_043_of_116_0.wav', 'segment_text': "Yes Aren't you going to ask me about my show What Yes I'm sorry tell me Well I'm pretty excited actually I just got booked to do my one man show Insights in the basement of Hooligans Hooligans that's great Where is that again You know the Irish bar on Second Avenue it has the basement where Claudia did her poetry reading Oh yeah that Hooligans yeah such a great space", 'question': 'Where will the one-man show be performed?', 'C1': 'A. In a theater on Broadway', 'C2': 'B. In the basement of an Irish bar', 'C3': "C. At Claudia's poetry reading", 'C4': 'D. In a small town in Connecticut', 'C_correct': 'B. In the basement of an Irish bar', 'duration': 12.6, 'summary': 'yes'},
      {'wav_file': 'Someday_79_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_036_of_116_1.wav', 'segment_text': 'But something is holding me back It would be so easy to say yes and leave this room with an agent almost too easy I Look around the room and the walls of old scripts and playbills that seemed warm and friendly when I first came in Now look cluttered and shabby the leather on the arms of this giant lumpy chair is worn thin The stuffing is peeking through one of the seams and the sunlight streaming through the window is cloudy with dust I stammer a bit', 'question': "What is one of the factors that is preventing the narrator from immediately accepting the agent's offer?", 'C1': "A. The agent's appearance", 'C2': 'B. The condition of the room', 'C3': "C. The agent's attitude", 'C4': 'D. The lack of other actors', 'C_correct': 'B. The condition of the room', 'duration': 10.66875, 'summary': 'yes'},
      {'wav_file': 'Someday_114_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_051_of_116_0.wav', 'segment_text': "You know in general for show business I think that's why I'm not getting any calls from the agency What do you think is the right way to look You know more like these girls on still nursing I gesture toward the television where a buxom blonde in a short skirt and open doctor's coat is struggling to reattach the IV of an elderly male patient by straddling his hospital bed accidentally smothering him with her cleavage The studio audience screams with laughter", 'question': 'What TV show does the narrator reference in their conversation about appearances?', 'C1': 'A. A cooking show', 'C2': 'B. A crime show', 'C3': 'C. A sitcom called "Still Nursing"', 'C4': 'D. A reality show', 'C_correct': 'C. A sitcom called "Still Nursing"', 'duration': 7.17, 'summary': 'yes'},
      {'wav_file': 'Someday_18_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_011_of_116_1.wav', 'segment_text': "The D train between Brooklyn and Manhattan is one of my favorite lines because at one the train emerges from underground and goes high over the river along the Manhattan Bridge Sometimes I put on my headphones and listen to music Sometimes I do the New York Times crossword puzzle And sometimes I read But no matter what else I'm doing I consider it very bad luck if I forget to look up as the train crosses over the East River even just for a second before it goes back underground It's just a superstition", 'question': 'Why does the narrator always look up when the D train crosses the East River?', 'C1': 'A. To enjoy the view', 'C2': 'B. To avoid bad luck', 'C3': 'C. To read the subway signs', 'C4': "D. To see if it's raining", 'C_correct': 'B. To avoid bad luck', 'duration': 10.53375, 'summary': 'no'},
      {'wav_file': 'Someday_144_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_092_of_116_1.wav', 'segment_text': "Numbly, I watch my father behave in a way I've seldom seen. I'm riveted by how unfamiliar he seems to me, and I can't look away, even though his loopy expression makes me feel a little queasy. He's grinning so wide, he looks positively goofy. He calls her Dr. Mary, as in, Dr. Mary and I both love the New Haven Symphony season, and in response she laughs and rolls her eyes. It's so embarrassing when he calls me that, isn't it, Frances?", 'question': "What does the narrator's father call the woman?", 'C1': 'A. Dr. Mary', 'C2': 'B. Dr. Shelly', 'C3': 'C. Dr. Meryl', 'C4': 'D. Dr. Kelly', 'C_correct': 'A. Dr. Mary', 'duration': 9.2251875, 'summary': 'yes'},
      {'wav_file': 'Someday_124_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_054_of_116_4.wav', 'segment_text': "If I come home to you eating a pint of Haagen Dazs and watching When Harry Met Sally I'm calling the police What are they going to do arrest me for being a clich√© So when the phone rings at 1130 that morning I lunge for it grabbing it on the second ring I'll pretend to Jane I'm in good spirits I'll act peppy as if I've been up for hours Hello this is Richard calling from Absolute Artists Is Franny there", 'question': 'Who calls the main character from Absolute Artists?', 'C1': 'A. Barney Sparks', 'C2': 'B. Richard', 'C3': 'C. Jane', 'C4': 'D. Dan', 'C_correct': 'B. Richard', 'duration': 10.78875, 'summary': 'no'},
      {'wav_file': 'Someday_53_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_026_of_116_1.wav', 'segment_text': "It can be dangerous to take the subway all the way to Brooklyn this late I should take a cab she's right but I'm too embarrassed to tell her I only have about 8 in cash on me and probably less than 20 in my bank account so I can't even go to a cash machine I'll get tips and a tiny paycheck at my shift at the club tomorrow night which I'll take directly to the check cashing place on the skeevy part of Fifth Avenue in Brooklyn which will charge me almost a quarter of the check to turn it into immediate cash but I can't wait the five to seven days for the bank to clear it or the electric bill will bounce", 'question': 'Why is the narrator embarrassed to take a cab?', 'C1': "A. She doesn't have enough cash", 'C2': "B. She doesn't want to spend money", 'C3': 'C. She prefers the subway', 'C4': "D. She doesn't know how to hail a cab", 'C_correct': "A. She doesn't have enough cash", 'duration': 9.2125, 'summary': 'yes'},
      {'wav_file': 'Someday_137_condition.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_079_of_116_4.wav', 'segment_text': "It's an exercise I love. I'm better the first read sometimes than I am after I've rehearsed, after I've had time to doubt my choices. I pick up the pages, all five of them, and take care not to uncurl them yet. I glance at the page numbers in the upper right hand corner to put them in order, but resist the urge to look any farther and head back downstairs. Dan has put his glasses on as he does when he's working intensely on something. He looks a little nervous as if he's about to give his campaign speech for class president.", 'question': 'How does Dan look?', 'C1': 'A. Nervous', 'C2': 'B. Angry', 'C3': 'C. Sad', 'C4': 'D. Annoyed', 'C_correct': 'A. Nervous', 'duration': 30.86096875, 'summary': 'yes'},
      {'wav_file': 'Someday_41_condition-4x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_022_of_116_0.wav', 'segment_text': "And even if I give it more thought and someday decide I'm very definitely against wearing the same animal that brings Easter baskets to little children it's not really like me to judge someone else for her rabbit related choices Penelope's face falls and she looks down at her jacket You know she says it is real I wasn't sure about it myself but it was my mother's and so I figured it's vintage She trails off and absently runs her fingers over the silky white collar", 'question': 'What does Penelope say about her rabbit fur jacket?', 'C1': "A. It's fake", 'C2': "B. It's vintage", 'C3': "C. It's for Easter", 'C4': "D. It's her sister's", 'C_correct': "B. It's vintage", 'duration': 7.205, 'summary': 'yes'},
      {'wav_file': 'Someday_143_condition-2-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_088_of_116_3.wav', 'segment_text': "I know maybe I can give you my ID and you can pretend to be me Good thinking where can I get colored contacts and all of complexion and darker straighter hair in about an hour? I'm just brainstorming here. It's fine. Forget it. I just won't go But it feels terrible to even speak that possibility out loud. I've never missed a Finnegan wedding I haven't seen my dad in months haven't even really spoken to him His messages have had a strange sound to them lately. I think he's lonely. I can rent the car.", 'question': 'What does the narrator think about her father?', 'C1': 'A. He is sad', 'C2': 'B. He is lonely', 'C3': 'C. He is cheerful', 'C4': 'D. He is proud', 'C_correct': 'B. He is lonely', 'duration': 13.52553125, 'summary': 'yes'},
      {'wav_file': 'Someday_29_condition-3x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_017_of_116_1.wav', 'segment_text': "You said you're new Who Me Well sort of yes I'm new to class but I've lived in New York for a little while two years over two years I worked for my dad at his school and then I was in a theater company for a long time before that touring and also I've done one commercial and that's it Ugh I'm babbling At least I didn't tell him the company was called Go Kids and we played stupid fairy tale characters and the only places we toured were elementary schools in the Tri State area Oh God what if he asks what company I was in I wish I hadn't mentioned the commercial either", 'question': 'What is the narrator worried about regarding her introduction to the person she meets on the street?', 'C1': 'A. Revealing too much about her background', 'C2': 'B. Not providing enough information', 'C3': 'C. Mentioning the wrong company name', 'C4': 'D. Being too concise in her introduction', 'C_correct': 'A. Revealing too much about her background', 'duration': 11.0775, 'summary': 'yes'},
      {'wav_file': 'Someday_106_condition-3-5x.wav', 'old_name': 'Someday__Someday__Maybe__Unabridged___File_047_of_116_2.wav', 'segment_text': "Someone goes for him Someone does everything for him And he seems miserable He reads everything they write about him in the magazines and he gets so upset When work is over and his wife is back in LA he doesn't seem to know what to do with himself And he goes out with the guys from the crew who aren't even really his friends And they get drunk and it ends up on page six I keep thinking someone should be helping him in a different way or there should be some sort of manual for him because he just doesn't seem to be enjoying any of it", 'question': "How does the person the narrator works for behave when he's not working?", 'C1': 'A. He enjoys his free time and socializes with friends', 'C2': 'B. He reads about himself in magazines and gets upset', 'C3': 'C. He spends time with his wife in LA', 'C4': 'D. He writes a manual for himself to navigate success', 'C_correct': 'B. He reads about himself in magazines and gets upset', 'duration': 8.9375, 'summary': 'yes'},
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    Routine Start_Segment
    Routine Training_Segment
    Routine Summary
  LoopTerminator experiment
  Routine Thanks
